// Artificial cells no longer need a default section.
//Network cell templates
//   FR_Cell
//Artificial cells
//   Enetstim_NetStim
//   Inetstim_NetStim


begintemplate FR_Cell
objref this
public is_art
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo		// Public functions accessable from outside the template
public synIAlist, synIBlist, synIClist, synIDlist							// Synapse lists (group A, B, C, D) for system I
public synIIAlist, synIIBlist, synIIClist, synIIDlist							// Synapse lists (group A, B, C, D) for system II
public ncIAlist, ncIBlist, ncIClist, ncIDlist								// Netcon lists (group A, B, C, D) for system I
public ncIIAlist, ncIIBlist, ncIIClist, ncIIDlist							// Netcon lists (group A, B, C, D) for system II
public nsIlist, nsIIlist											// Netstim list driving groups A, B, C, and D in order for systems I and II
public ShiftThreshold, parameters, x, y, z, position, connect2target, Vspike, Vrest
public TwitchForce, TwitchTime
public nf, rfVec, PhiCount													// New publics for EMG model

// new publics for graded potential method of adding synapses to cells
public NS_A_sysI, NS_B_sysI, NS_C_sysI, NS_D_sysI, NS_A_sysII, NS_B_sysII, NS_C_sysII, NS_D_sysII
public Medial_Syn_sysI, Lateral_Syn_sysI, Dorsal_Syn_sysI, Ventral_Syn_sysI, Rostral_Syn_sysI, Caudal_Syn_sysI
public Medial_Syn_sysII, Lateral_Syn_sysII, Dorsal_Syn_sysII, Ventral_Syn_sysII, Rostral_Syn_sysII, Caudal_Syn_sysII
public Den1_Syn, Den2_Syn, Den3_Syn, Den4_Syn, Den5_Syn, Den6_Syn, Den7_Syn, Den8_Syn, Den9_Syn, Den10_Syn, Den11_Syn
public TotalSysISynNumber, TotalSysIISynNumber, SconductanceVec_SysI, SysISyn, SysIISyn, SysI_NC, SysII_NC
public CreateSysISyn, TotalArea, SconductanceVec_SysII, InitialSysIWeights, InitialSysIIWeights
public SectionArea, NumSysISynapsesPerSection, NumSysIISynapsesPerSection, Gsynapse

public soma, ah11, den1o0b1s1t2, den3o0b1s1t1, den2o0b1s1t2, den4o0b1s1t2, den6o0b1s1t2
public den5o0b1s1t2, den10o0b1s1t1, den11o0b1s1t1, den8o0b1s1t2, den9o0b1s1t1, den7o0b1s1t2, ah10
public den1o1b2s1t1, den1o1b1s1t2, den3o0b1s2t2, den2o1b2s1t1, den2o1b1s1t2, den4o1b2s1t1, den4o1b1s1t1
public den6o1b2s1t1, den6o1b1s1t1, den5o1b2s1t1, den5o1b1s1t1, den10o0b1s2t2, den11o0b1s2t2, den8o1b2s1t1
public den8o1b1s1t2, den9o0b1s2t2, den7o1b2s1t1, den7o1b1s1t2, ah9, den1o1b2s2t2, den1o2b1s1t2
public den1o2b2s1t2, den3o1b2s1t1, den3o1b1s1t2, den2o1b2s2t2, den2o2b1s1t1, den2o2b2s1t1, den4o1b2s2t2
public den4o1b1s2t2, den6o1b2s2t2, den6o1b1s2t2, den5o1b2s2t2, den5o1b1s2t2, den10o1b2s1t1, den10o1b1s1t2
public den11o1b2s1t1, den11o1b1s1t2, den8o1b2s2t2, den8o2b2s1t1, den8o2b1s1t1, den9o1b2s1t1, den9o1b1s1t1
public den7o1b2s2t1, den7o2b2s1t1, den7o2b1s1t1, ah8, den1o2b4s1t1, den1o2b3s1t1, den1o3b1s1t2
public den1o3b2s1t1, den1o3b4s1t2, den1o3b3s1t2, den3o1b2s2t2, den3o2b2s1t1, den3o2b1s1t1, den2o2b4s1t1
public den2o2b3s1t1, den2o2b1s2t2, den2o2b2s2t1, den4o2b4s1t1, den4o2b3s1t2, den4o2b2s1t1, den4o2b1s1t1
public den6o2b4s1t1, den6o2b3s1t1, den6o2b2s1t1, den6o2b1s1t2, den5o2b4s1t1, den5o2b3s1t2, den5o2b2s1t1
public den5o2b1s1t1, den10o1b2s2t2, den10o2b2s1t3, den10o2b1s1t1, den11o1b2s2t2, den11o2b2s1t1, den11o2b1s1t1
public den8o2b4s1t1, den8o2b3s1t1, den8o2b2s2t1, den8o2b1s2t2, den9o1b2s2t2, den9o1b1s2t2, den7o1b2s3t3
public den7o2b2s2t1, den7o2b1s2t1, ah7, den1o2b4s2t1, den1o2b3s2t2, den1o4b1s1t2, den1o4b2s1t1
public den1o3b2s2t2, den1o4b8s1t1, den1o4b7s1t1, den1o4b6s1t1, den1o4b5s1t1, den3o2b4s1t1, den3o2b3s1t1
public den3o2b2s2t2, den3o2b1s2t2, den2o2b4s2t2, den2o2b3s2t2, den2o3b2s1t1, den2o3b1s1t1, den2o2b2s3t2
public den4o2b4s2t1, den4o3b6s1t1, den4o3b5s1t2, den4o2b2s2t2, den4o2b1s2t2, den6o2b4s2t1, den6o2b3s2t2
public den6o2b2s2t2, den6o3b2s1t1, den6o3b1s1t1, den5o2b4s2t2, den5o3b6s1t3, den5o3b5s1t1, den5o2b2s2t2
public den5o2b1s2t2, den10o2b4s1t1, den10o2b3s1t1, den10o2b1s2t2, den11o2b4s1t1, den11o2b3s1t1, den11o2b2s2t2
public den11o2b1s2t2, den8o2b4s2t3, den8o2b3s2t1, den8o2b2s3t1, den8o3b2s1t1, den8o3b1s1t2, den9o2b4s1t1
public den9o2b3s1t1, den9o2b2s1t1, den9o2b1s1t1, den7o2b2s3t1, den7o2b1s3t1, ah6, den1o2b4s3t1
public den1o3b6s1t1, den1o3b5s1t1, den1o5b2s1t1, den1o5b1s1t1, den1o4b2s2t2, den1o4b4s1t1, den1o4b3s1t1
public den1o4b8s2t1, den1o4b7s2t2, den1o4b6s2t2, den1o4b5s2t2, den3o2b4s2t3, den3o2b3s2t1, den3o3b4s1t1
public den3o3b3s1t2, den3o3b2s1t1, den3o3b1s1t1, den2o3b8s1t1, den2o3b7s1t1, den2o3b6s1t1, den2o3b5s1t2
public den2o3b2s2t2, den2o3b1s2t2, den2o3b4s1t3, den2o3b3s1t1, den4o2b4s3t1, den4o3b6s2t3, den4o4b10s1t1
public den4o4b9s1t1, den4o3b4s1t1, den4o3b3s1t1, den4o3b2s1t1, den4o3b1s1t2, den6o2b4s3t1, den6o3b6s1t1
public den6o3b5s1t2, den6o3b4s1t3, den6o3b3s1t1, den6o3b2s2t1, den6o3b1s2t2, den5o3b8s1t1, den5o3b7s1t1
public den5o3b5s2t2, den5o3b4s1t1, den5o3b3s1t2, den5o3b2s1t1, den5o3b1s1t2, den10o2b4s2t1, den10o2b3s2t2
public den10o3b2s1t1, den10o3b1s1t2, den11o2b4s2t3, den11o2b3s2t2, den11o3b4s1t1, den11o3b3s1t2, den11o3b2s1t1
public den11o3b1s1t2, den8o2b3s3t1, den8o2b2s4t3, den8o3b2s2t3, den8o4b2s1t1, den8o4b1s1t1, den9o2b4s2t3
public den9o2b3s2t1, den9o2b2s2t1, den9o2b1s2t2, den7o2b2s4t1, den7o2b1s4t1, ah5, den1o2b4s4t3
public den1o3b6s2t2, den1o3b5s2t2, den1o5b2s2t2, den1o5b1s2t2, den1o5b4s1t1, den1o5b3s1t2, den1o4b4s2t3
public den1o4b3s2t1, den1o4b8s3t1, den1o5b14s1t1, den1o5b13s1t1, den1o5b12s1t1, den1o5b11s1t1, den1o5b10s1t1
public den1o5b9s1t1, den3o2b3s3t1, den3o3b4s2t1, den3o4b6s1t1, den3o4b5s1t2, den3o3b2s2t1, den3o3b1s2t2
public den2o3b8s2t2, den2o3b7s2t1, den2o3b6s2t3, den2o4b10s1t1, den2o4b9s1t2, den2o4b4s1t1, den2o4b3s1t2
public den2o4b2s1t1, den2o4b1s1t1, den2o3b3s2t1, den4o2b4s4t3, den4o4b10s2t3, den4o4b9s2t2, den4o3b4s2t3
public den4o3b3s2t1, den4o3b2s2t1, den4o4b2s1t1, den4o4b1s1t1, den6o2b4s4t1, den6o3b6s2t3, den6o4b10s1t2
public den6o4b9s1t1, den6o3b3s2t2, den6o3b2s3t1, den6o4b2s1t1, den6o4b1s1t1, den5o3b8s2t3, den5o3b7s2t3
public den5o4b10s1t1, den5o4b9s1t2, den5o3b4s2t3, den5o4b6s1t3, den5o4b5s1t1, den5o3b2s2t2, den5o4b2s1t1
public den5o4b1s1t1, den10o2b4s3t3, den10o3b6s1t1, den10o3b5s1t2, den10o3b2s2t3, den10o4b2s1t1, den10o4b1s1t2
public den11o3b6s1t1, den11o3b5s1t1, den11o3b4s2t3, den11o4b6s1t3, den11o4b5s1t1, den11o3b2s2t1, den11o4b2s1t2
public den11o4b1s1t1, den8o2b3s4t1, den8o4b2s2t2, den8o4b1s2t2, den9o2b3s3t1, den9o2b2s3t1, den9o3b2s1t3
public den9o3b1s1t1, den7o2b2s5t3, den7o2b1s5t1, ah4, den1o4b12s1t1, den1o4b11s1t1, den1o4b10s1t1
public den1o4b9s1t1, den1o6b4s1t1, den1o6b3s1t1, den1o6b2s1t1, den1o6b1s1t2, den1o5b4s2t3, den1o6b6s1t1
public den1o6b5s1t2, den1o4b3s3t1, den1o4b8s4t3, den1o5b14s2t1, den1o5b13s2t3, den1o5b12s2t3, den1o5b11s2t2
public den1o5b10s2t1, den1o5b9s2t2, den3o2b3s4t3, den3o3b4s3t1, den3o4b6s2t3, den3o5b10s1t1, den3o5b9s1t1
public den3o3b2s3t1, den3o4b2s1t1, den3o4b1s1t2, den2o4b16s1t1, den2o4b15s1t1, den2o3b7s3t1, den2o4b10s2t3
public den2o5b18s1t1, den2o5b17s1t2, den2o4b4s2t1, den2o5b6s1t3, den2o5b5s1t2, den2o4b2s2t2, den2o4b1s2t2
public den2o3b3s3t1, den4o5b18s1t1, den4o5b17s1t2, den4o3b3s3t1, den4o3b2s3t1, den4o4b2s2t2, den4o4b1s2t2
public den6o2b4s5t1, den6o5b20s1t3, den6o5b19s1t1, den6o4b9s2t1, den6o4b6s1t1, den6o4b5s1t2, den6o3b2s4t1
public den6o4b2s2t3, den6o4b1s2t2, den5o4b10s2t1, den5o5b18s1t1, den5o5b17s1t1, den5o4b5s2t2, den5o4b4s1t1
public den5o4b3s1t2, den5o4b2s2t1, den5o4b1s2t2, den10o3b6s2t2, den10o4b10s1t1, den10o4b9s1t2, den10o4b2s2t1
public den10o5b2s1t3, den10o5b1s1t1, den11o3b6s2t3, den11o3b5s2t1, den11o4b5s2t1, den11o3b2s3t1, den11o5b4s1t3
public den11o5b3s1t1, den11o4b1s2t2, den8o2b3s5t1, den8o5b4s1t1, den8o5b3s1t1, den8o5b2s1t1, den8o5b1s1t1
public den9o2b3s4t1, den9o2b2s4t1, den9o3b1s2t1, den7o2b1s6t1, ah3, den1o4b12s2t3, den1o4b11s2t1
public den1o4b10s2t2, den1o4b9s2t2, den1o6b4s2t3, den1o6b3s2t1, den1o6b2s2t2, den1o7b2s1t3, den1o7b1s1t1
public den1o6b6s2t2, den1o7b10s1t1, den1o7b9s1t1, den1o4b3s4t1, den1o5b14s3t1, den1o6b22s1t2, den1o6b21s1t2
public den1o5b10s3t3, den1o6b18s1t1, den1o6b17s1t1, den3o3b4s4t1, den3o5b10s2t1, den3o5b9s2t1, den3o3b2s4t1
public den3o4b2s2t2, den3o5b2s1t1, den3o5b1s1t2, den2o4b16s2t3, den2o4b15s2t1, den2o3b7s4t3, den2o5b18s2t1
public den2o6b34s1t1, den2o6b33s1t2, den2o4b4s3t3, den2o6b10s1t1, den2o6b9s1t1, den2o5b4s1t1, den2o5b3s1t1
public den2o5b2s1t1, den2o5b1s1t2, den2o3b3s4t1, den4o5b18s2t3, den4o6b34s1t2, den4o6b33s1t1, den4o3b3s4t1
public den4o3b2s4t1, den4o5b4s1t1, den4o5b3s1t1, den4o5b2s1t3, den4o5b1s1t1, den6o2b4s6t3, den6o5b19s2t3
public den6o4b9s3t1, den6o4b6s2t3, den6o5b10s1t1, den6o5b9s1t2, den6o3b2s5t3, den6o5b2s1t1, den6o5b1s1t1
public den5o4b10s3t1, den5o5b18s2t3, den5o5b17s2t2, den5o5b10s1t3, den5o5b9s1t1, den5o4b4s2t3, den5o5b6s1t1
public den5o5b5s1t1, den5o4b2s3t1, den5o5b2s1t1, den5o5b1s1t1, den10o4b12s1t1, den10o4b11s1t1, den10o4b10s2t1
public den10o5b18s1t1, den10o5b17s1t1, den10o4b2s3t1, den10o5b1s2t2, den11o3b5s3t1, den11o4b5s3t2, den11o3b2s4t3
public den11o5b3s2t1, den11o5b2s1t1, den11o5b1s1t2, den8o2b3s6t3, den8o5b4s2t3, den8o5b3s2t2, den8o5b2s2t2
public den8o5b1s2t1, den9o2b3s5t1, den9o2b2s5t3, den9o3b1s3t1, den7o2b1s7t1, ah2, den1o4b11s3t3
public den1o5b20s1t3, den1o5b19s1t1, den1o5b18s1t1, den1o5b17s1t1, den1o6b3s3t1, den1o7b4s1t1, den1o7b3s1t1
public den1o7b1s2t1, den1o7b12s1t1, den1o7b11s1t1, den1o7b10s2t3, den1o7b9s2t1, den1o4b3s5t1, den1o5b14s4t3
public den1o7b44s1t3, den1o7b43s1t1, den1o7b42s1t1, den1o7b41s1t1, den1o6b18s2t3, den1o6b17s2t1, den3o3b4s5t3
public den3o5b10s3t1, den3o5b9s3t1, den3o3b2s5t1, den3o5b4s1t1, den3o5b3s1t1, den3o5b2s2t1, den3o6b2s1t1
public den3o6b1s1t1, den2o4b15s3t1, den2o5b18s3t1, den2o6b34s2t3, den2o7b66s1t3, den2o7b65s1t1, den2o6b10s2t1
public den2o6b9s2t3, den2o5b4s2t3, den2o5b3s2t1, den2o5b2s2t3, den2o6b2s1t3, den2o6b1s1t1, den2o3b3s5t3
public den4o7b68s1t1, den4o7b67s1t1, den4o6b33s2t2, den4o3b3s5t3, den4o3b2s5t1, den4o5b4s2t3, den4o5b3s2t1
public den4o5b1s2t2, den6o4b9s4t1, den6o5b10s2t3, den6o6b18s1t1, den6o6b17s1t1, den6o5b2s2t3, den6o5b1s2t1
public den5o4b10s4t3, den5o6b34s1t1, den5o6b33s1t1, den5o5b9s2t1, den5o5b6s2t3, den5o5b5s2t1, den5o4b2s4t1
public den5o5b2s2t3, den5o5b1s2t1, den10o4b12s2t3, den10o4b11s2t1, den10o4b10s3t3, den10o5b18s2t1, den10o5b17s2t2
public den10o4b2s4t1, den10o6b2s1t1, den10o6b1s1t1, den11o3b5s4t1, den11o5b10s1t3, den11o5b9s1t3, den11o5b3s3t1
public den11o5b2s2t3, den11o6b2s1t2, den11o6b1s1t1, den8o6b6s1t1, den8o6b5s1t1, den8o6b4s1t3, den8o6b3s1t1
public den8o5b1s3t1, den9o2b3s6t3, den9o3b1s4t3, den7o2b1s8t3, ah1, den1o5b19s2t1, den1o5b18s2t3
public den1o5b17s2t1, den1o6b3s4t1, den1o7b4s2t3, den1o7b3s2t1, den1o7b1s3t1, den1o7b12s2t3, den1o7b11s2t1
public den1o7b9s3t3, den1o4b3s6t1, den1o7b43s2t3, den1o7b42s2t1, den1o7b41s2t2, den1o6b17s3t3, den3o5b10s4t1
public den3o5b9s4t1, den3o3b2s6t3, den3o5b4s2t2, den3o5b3s2t1, den3o5b2s3t1, den3o6b2s2t1, den3o6b1s2t2
public den2o4b15s4t1, den2o5b18s4t1, den2o7b65s2t1, den2o6b10s3t1, den2o5b3s3t1, den2o6b1s2t1, den4o7b68s2t3
public den4o7b67s2t1, den4o7b66s1t1, den4o7b65s1t1, den4o3b2s6t2, den4o5b3s3t1, den4o6b2s1t1, den4o6b1s1t1
public den6o4b9s5t1, den6o6b18s2t2, den6o6b17s2t2, den6o5b1s3t1, den5o6b34s2t3, den5o6b33s2t1, den5o5b9s3t1
public den5o5b5s3t1, den5o4b2s5t3, den5o5b1s3t3, den10o4b11s3t3, den10o5b18s3t3, den10o6b34s1t1, den10o6b33s1t1
public den10o4b2s5t3, den10o6b2s2t1, den10o6b1s2t1, den11o3b5s5t3, den11o5b3s4t3, den11o7b4s1t3, den11o7b3s1t1
public den11o6b1s2t1, den8o6b6s2t3, den8o6b5s2t1, den8o6b3s2t1, den8o5b1s4t3, iseg, den1o5b19s3t1
public den1o5b17s3t1, den1o6b3s5t3, den1o7b3s3t3, den1o7b1s4t3, den1o7b11s3t1, den1o4b3s7t3, den1o7b42s3t3
public den1o8b82s1t1, den1o8b81s1t2, den3o5b10s5t1, den3o5b9s5t3, den3o6b8s1t3, den3o6b7s1t1, den3o5b3s3t1
public den3o5b2s4t3, den3o6b2s3t1, den3o7b2s1t1, den3o7b1s1t1, den2o4b15s5t3, den2o5b18s5t3, den2o7b65s3t3
public den2o6b10s4t3, den2o5b3s4t3, den2o6b1s3t1, den4o7b67s3t1, den4o7b66s2t3, den4o7b65s2t1, den4o4b4s1t3
public den4o4b3s1t1, den4o5b3s4t3, den4o6b2s2t3, den4o6b1s2t1, den6o4b9s6t3, den6o7b36s1t1, den6o7b35s1t1
public den6o7b34s1t1, den6o7b33s1t2, den6o5b1s4t1, den5o6b33s3t1, den5o5b9s4t1, den5o5b5s4t1, den10o6b34s2t1
public den10o6b33s2t1, den10o6b2s3t3, den10o6b1s3t1, den11o7b3s2t1, den11o6b1s3t1, den8o6b5s3t1, den8o6b3s3t1
public den1o5b19s4t3, den1o5b17s4t3, den1o7b11s4t1, den1o8b82s2t3, den1o9b162s1t1, den1o9b161s1t1, den3o5b10s6t3
public den3o6b7s2t3, den3o5b3s4t1, den3o6b2s4t1, den3o7b2s2t1, den3o7b1s2t1, den2o6b1s4t2, den4o7b67s4t1
public den4o7b65s3t3, den4o4b3s2t3, den4o6b1s3t1, den6o7b36s2t3, den6o7b35s2t3, den6o7b34s2t3, den6o8b66s1t1
public den6o8b65s1t2, den6o5b1s5t1, den5o6b33s4t3, den5o5b9s5t3, den5o5b5s5t1, den10o6b34s3t1, den10o6b33s3t1
public den10o6b1s4t1, den11o7b3s3t3, den11o6b1s4t1, den8o6b5s4t3, den8o6b3s4t3, den1o7b11s5t3, den1o9b162s2t3
public den1o9b161s2t3, den3o5b3s5t3, den3o6b2s5t1, den3o7b2s3t3, den3o7b1s3t1, den2o7b2s1t3, den2o7b1s1t3
public den4o7b67s5t3, den4o6b1s4t3, den6o8b66s2t1, den6o9b130s1t1, den6o9b129s1t1, den6o5b1s6t3, den5o5b5s6t3
public den10o6b34s4t3, den10o6b33s4t3, den10o6b1s5t3, den11o6b1s5t3, den3o6b2s6t3, den3o7b1s4t3, den6o8b66s3t3
public den6o9b130s2t3, den6o9b129s2t3
public all, den , Axon

objref synIAlist, synIBlist, synIClist, synIDlist							// Synapse lists (group A, B, C, D) for system I
objref synIIAlist, synIIBlist, synIIClist, synIIDlist							// Synapse lists (group A, B, C, D) for system II
objref ncIAlist, ncIBlist, ncIClist, ncIDlist								// Netcon lists (group A, B, C, D) for system I
objref ncIIAlist, ncIIBlist, ncIIClist, ncIIDlist							// Netcon lists (group A, B, C, D) for system II
objref nsIlist, nsIIlist											// Netstim list driving groups A, B, C, and D in order for systems I and II
objref NS_A_sysI, NS_B_sysI, NS_C_sysI, NS_D_sysI, NS_A_sysII, NS_B_sysII, NS_C_sysII, NS_D_sysII
objref Medial_Syn_sysI, Lateral_Syn_sysI, Dorsal_Syn_sysI, Ventral_Syn_sysI, Caudal_Syn_sysI, Rostral_Syn_sysI
objref Medial_Syn_sysII, Lateral_Syn_sysII, Dorsal_Syn_sysII, Ventral_Syn_sysII, Caudal_Syn_sysII, Rostral_Syn_sysII
objref Den1_Syn, Den2_Syn, Den3_Syn, Den4_Syn, Den5_Syn, Den6_Syn, Den7_Syn, Den8_Syn, Den9_Syn, Den10_Syn, Den11_Syn
objref SconductanceVec_SysI, SconductanceVec_SysII, SysISyn[2860], SysIISyn[2860]
objref SysII_NC[2860], SysI_NC[2860], InitialSysIWeights, InitialSysIIWeights
objref rfVec, PhiCount												// New objrefs for EMG model

proc init() {
  parameters()
  topol()
  subsets()
  geom()
  biophys()
//  CreateSysISyn()

  synIAlist = new List()  synIBlist = new List()  synIClist = new List()  synIDlist = new List()		// Synapse lists (group A, B, C, D) for system I
  synIIAlist = new List()  synIIBlist = new List()  synIIClist = new List()  synIIDlist = new List()		// Synapse lists (group A, B, C, D) for system II
  ncIAlist = new List()  ncIBlist = new List()  ncIClist = new List()  ncIDlist = new List()			// Netcon lists (group A, B, C, D) for system I
  ncIIAlist = new List()  ncIIBlist = new List()  ncIIClist = new List()  ncIIDlist = new List()		// Netcon lists (group A, B, C, D) for system II
  nsIlist = new List()															// Netstim list driving groups A, B, C, D , for system I
  nsIIlist = new List()															// Netstim list driving groups A, B, C, D , for system II
  SysISyn = new List()
  SysIISyn = new List()
  SysI_NC = new List()
  SysII_NC = new List()
  PhiCount = new List()															//Electrode potential list

	Medial_Syn_sysI = new Vector()	 Lateral_Syn_sysI = new Vector() 	Dorsal_Syn_sysI = new Vector()
	Ventral_Syn_sysI = new Vector()	 Caudal_Syn_sysI = new Vector() 	Rostral_Syn_sysI = new Vector()
	Medial_Syn_sysII = new Vector()  Lateral_Syn_sysII = new Vector() 	Dorsal_Syn_sysII = new Vector()
	Ventral_Syn_sysII = new Vector() Caudal_Syn_sysII = new Vector()	Rostral_Syn_sysII = new Vector()

	Den1_Syn = new Vector() 	Den2_Syn = new Vector() 	Den3_Syn = new Vector() 	Den4_Syn = new Vector()
	Den5_Syn = new Vector() 	Den6_Syn = new Vector() 	Den7_Syn = new Vector() 	Den8_Syn = new Vector()
	Den9_Syn = new Vector() 	Den10_Syn = new Vector()	Den11_Syn = new Vector()

	SconductanceVec_SysI = new Vector()
	SconductanceVec_SysII = new Vector()
	InitialSysIWeights = new Vector()	InitialSysIIWeights = new Vector()
	rfVec = new Vector()		//vector of fiber radii

  TotalSysISynNumber = 0 //initialize this variable.
  TotalSysIISynNumber = 0
  TotalArea = 0
  SectionArea = 0
  Gsynapse = 0
  NumSysISynapsesPerSection = 0
  NumSysIISynapsesPerSection = 0
  x = y = z = 0 // only change via position
  TwitchForce = 0
  TwitchTime = 0
  nf = 0											// number of muscle fibers -- initialize to 0.
}

create soma, ah11, den1o0b1s1t2, den3o0b1s1t1, den2o0b1s1t2, den4o0b1s1t2, den6o0b1s1t2
create den5o0b1s1t2, den10o0b1s1t1, den11o0b1s1t1, den8o0b1s1t2, den9o0b1s1t1, den7o0b1s1t2, ah10
create den1o1b2s1t1, den1o1b1s1t2, den3o0b1s2t2, den2o1b2s1t1, den2o1b1s1t2, den4o1b2s1t1, den4o1b1s1t1
create den6o1b2s1t1, den6o1b1s1t1, den5o1b2s1t1, den5o1b1s1t1, den10o0b1s2t2, den11o0b1s2t2, den8o1b2s1t1
create den8o1b1s1t2, den9o0b1s2t2, den7o1b2s1t1, den7o1b1s1t2, ah9, den1o1b2s2t2, den1o2b1s1t2
create den1o2b2s1t2, den3o1b2s1t1, den3o1b1s1t2, den2o1b2s2t2, den2o2b1s1t1, den2o2b2s1t1, den4o1b2s2t2
create den4o1b1s2t2, den6o1b2s2t2, den6o1b1s2t2, den5o1b2s2t2, den5o1b1s2t2, den10o1b2s1t1, den10o1b1s1t2
create den11o1b2s1t1, den11o1b1s1t2, den8o1b2s2t2, den8o2b2s1t1, den8o2b1s1t1, den9o1b2s1t1, den9o1b1s1t1
create den7o1b2s2t1, den7o2b2s1t1, den7o2b1s1t1, ah8, den1o2b4s1t1, den1o2b3s1t1, den1o3b1s1t2
create den1o3b2s1t1, den1o3b4s1t2, den1o3b3s1t2, den3o1b2s2t2, den3o2b2s1t1, den3o2b1s1t1, den2o2b4s1t1
create den2o2b3s1t1, den2o2b1s2t2, den2o2b2s2t1, den4o2b4s1t1, den4o2b3s1t2, den4o2b2s1t1, den4o2b1s1t1
create den6o2b4s1t1, den6o2b3s1t1, den6o2b2s1t1, den6o2b1s1t2, den5o2b4s1t1, den5o2b3s1t2, den5o2b2s1t1
create den5o2b1s1t1, den10o1b2s2t2, den10o2b2s1t3, den10o2b1s1t1, den11o1b2s2t2, den11o2b2s1t1, den11o2b1s1t1
create den8o2b4s1t1, den8o2b3s1t1, den8o2b2s2t1, den8o2b1s2t2, den9o1b2s2t2, den9o1b1s2t2, den7o1b2s3t3
create den7o2b2s2t1, den7o2b1s2t1, ah7, den1o2b4s2t1, den1o2b3s2t2, den1o4b1s1t2, den1o4b2s1t1
create den1o3b2s2t2, den1o4b8s1t1, den1o4b7s1t1, den1o4b6s1t1, den1o4b5s1t1, den3o2b4s1t1, den3o2b3s1t1
create den3o2b2s2t2, den3o2b1s2t2, den2o2b4s2t2, den2o2b3s2t2, den2o3b2s1t1, den2o3b1s1t1, den2o2b2s3t2
create den4o2b4s2t1, den4o3b6s1t1, den4o3b5s1t2, den4o2b2s2t2, den4o2b1s2t2, den6o2b4s2t1, den6o2b3s2t2
create den6o2b2s2t2, den6o3b2s1t1, den6o3b1s1t1, den5o2b4s2t2, den5o3b6s1t3, den5o3b5s1t1, den5o2b2s2t2
create den5o2b1s2t2, den10o2b4s1t1, den10o2b3s1t1, den10o2b1s2t2, den11o2b4s1t1, den11o2b3s1t1, den11o2b2s2t2
create den11o2b1s2t2, den8o2b4s2t3, den8o2b3s2t1, den8o2b2s3t1, den8o3b2s1t1, den8o3b1s1t2, den9o2b4s1t1
create den9o2b3s1t1, den9o2b2s1t1, den9o2b1s1t1, den7o2b2s3t1, den7o2b1s3t1, ah6, den1o2b4s3t1
create den1o3b6s1t1, den1o3b5s1t1, den1o5b2s1t1, den1o5b1s1t1, den1o4b2s2t2, den1o4b4s1t1, den1o4b3s1t1
create den1o4b8s2t1, den1o4b7s2t2, den1o4b6s2t2, den1o4b5s2t2, den3o2b4s2t3, den3o2b3s2t1, den3o3b4s1t1
create den3o3b3s1t2, den3o3b2s1t1, den3o3b1s1t1, den2o3b8s1t1, den2o3b7s1t1, den2o3b6s1t1, den2o3b5s1t2
create den2o3b2s2t2, den2o3b1s2t2, den2o3b4s1t3, den2o3b3s1t1, den4o2b4s3t1, den4o3b6s2t3, den4o4b10s1t1
create den4o4b9s1t1, den4o3b4s1t1, den4o3b3s1t1, den4o3b2s1t1, den4o3b1s1t2, den6o2b4s3t1, den6o3b6s1t1
create den6o3b5s1t2, den6o3b4s1t3, den6o3b3s1t1, den6o3b2s2t1, den6o3b1s2t2, den5o3b8s1t1, den5o3b7s1t1
create den5o3b5s2t2, den5o3b4s1t1, den5o3b3s1t2, den5o3b2s1t1, den5o3b1s1t2, den10o2b4s2t1, den10o2b3s2t2
create den10o3b2s1t1, den10o3b1s1t2, den11o2b4s2t3, den11o2b3s2t2, den11o3b4s1t1, den11o3b3s1t2, den11o3b2s1t1
create den11o3b1s1t2, den8o2b3s3t1, den8o2b2s4t3, den8o3b2s2t3, den8o4b2s1t1, den8o4b1s1t1, den9o2b4s2t3
create den9o2b3s2t1, den9o2b2s2t1, den9o2b1s2t2, den7o2b2s4t1, den7o2b1s4t1, ah5, den1o2b4s4t3
create den1o3b6s2t2, den1o3b5s2t2, den1o5b2s2t2, den1o5b1s2t2, den1o5b4s1t1, den1o5b3s1t2, den1o4b4s2t3
create den1o4b3s2t1, den1o4b8s3t1, den1o5b14s1t1, den1o5b13s1t1, den1o5b12s1t1, den1o5b11s1t1, den1o5b10s1t1
create den1o5b9s1t1, den3o2b3s3t1, den3o3b4s2t1, den3o4b6s1t1, den3o4b5s1t2, den3o3b2s2t1, den3o3b1s2t2
create den2o3b8s2t2, den2o3b7s2t1, den2o3b6s2t3, den2o4b10s1t1, den2o4b9s1t2, den2o4b4s1t1, den2o4b3s1t2
create den2o4b2s1t1, den2o4b1s1t1, den2o3b3s2t1, den4o2b4s4t3, den4o4b10s2t3, den4o4b9s2t2, den4o3b4s2t3
create den4o3b3s2t1, den4o3b2s2t1, den4o4b2s1t1, den4o4b1s1t1, den6o2b4s4t1, den6o3b6s2t3, den6o4b10s1t2
create den6o4b9s1t1, den6o3b3s2t2, den6o3b2s3t1, den6o4b2s1t1, den6o4b1s1t1, den5o3b8s2t3, den5o3b7s2t3
create den5o4b10s1t1, den5o4b9s1t2, den5o3b4s2t3, den5o4b6s1t3, den5o4b5s1t1, den5o3b2s2t2, den5o4b2s1t1
create den5o4b1s1t1, den10o2b4s3t3, den10o3b6s1t1, den10o3b5s1t2, den10o3b2s2t3, den10o4b2s1t1, den10o4b1s1t2
create den11o3b6s1t1, den11o3b5s1t1, den11o3b4s2t3, den11o4b6s1t3, den11o4b5s1t1, den11o3b2s2t1, den11o4b2s1t2
create den11o4b1s1t1, den8o2b3s4t1, den8o4b2s2t2, den8o4b1s2t2, den9o2b3s3t1, den9o2b2s3t1, den9o3b2s1t3
create den9o3b1s1t1, den7o2b2s5t3, den7o2b1s5t1, ah4, den1o4b12s1t1, den1o4b11s1t1, den1o4b10s1t1
create den1o4b9s1t1, den1o6b4s1t1, den1o6b3s1t1, den1o6b2s1t1, den1o6b1s1t2, den1o5b4s2t3, den1o6b6s1t1
create den1o6b5s1t2, den1o4b3s3t1, den1o4b8s4t3, den1o5b14s2t1, den1o5b13s2t3, den1o5b12s2t3, den1o5b11s2t2
create den1o5b10s2t1, den1o5b9s2t2, den3o2b3s4t3, den3o3b4s3t1, den3o4b6s2t3, den3o5b10s1t1, den3o5b9s1t1
create den3o3b2s3t1, den3o4b2s1t1, den3o4b1s1t2, den2o4b16s1t1, den2o4b15s1t1, den2o3b7s3t1, den2o4b10s2t3
create den2o5b18s1t1, den2o5b17s1t2, den2o4b4s2t1, den2o5b6s1t3, den2o5b5s1t2, den2o4b2s2t2, den2o4b1s2t2
create den2o3b3s3t1, den4o5b18s1t1, den4o5b17s1t2, den4o3b3s3t1, den4o3b2s3t1, den4o4b2s2t2, den4o4b1s2t2
create den6o2b4s5t1, den6o5b20s1t3, den6o5b19s1t1, den6o4b9s2t1, den6o4b6s1t1, den6o4b5s1t2, den6o3b2s4t1
create den6o4b2s2t3, den6o4b1s2t2, den5o4b10s2t1, den5o5b18s1t1, den5o5b17s1t1, den5o4b5s2t2, den5o4b4s1t1
create den5o4b3s1t2, den5o4b2s2t1, den5o4b1s2t2, den10o3b6s2t2, den10o4b10s1t1, den10o4b9s1t2, den10o4b2s2t1
create den10o5b2s1t3, den10o5b1s1t1, den11o3b6s2t3, den11o3b5s2t1, den11o4b5s2t1, den11o3b2s3t1, den11o5b4s1t3
create den11o5b3s1t1, den11o4b1s2t2, den8o2b3s5t1, den8o5b4s1t1, den8o5b3s1t1, den8o5b2s1t1, den8o5b1s1t1
create den9o2b3s4t1, den9o2b2s4t1, den9o3b1s2t1, den7o2b1s6t1, ah3, den1o4b12s2t3, den1o4b11s2t1
create den1o4b10s2t2, den1o4b9s2t2, den1o6b4s2t3, den1o6b3s2t1, den1o6b2s2t2, den1o7b2s1t3, den1o7b1s1t1
create den1o6b6s2t2, den1o7b10s1t1, den1o7b9s1t1, den1o4b3s4t1, den1o5b14s3t1, den1o6b22s1t2, den1o6b21s1t2
create den1o5b10s3t3, den1o6b18s1t1, den1o6b17s1t1, den3o3b4s4t1, den3o5b10s2t1, den3o5b9s2t1, den3o3b2s4t1
create den3o4b2s2t2, den3o5b2s1t1, den3o5b1s1t2, den2o4b16s2t3, den2o4b15s2t1, den2o3b7s4t3, den2o5b18s2t1
create den2o6b34s1t1, den2o6b33s1t2, den2o4b4s3t3, den2o6b10s1t1, den2o6b9s1t1, den2o5b4s1t1, den2o5b3s1t1
create den2o5b2s1t1, den2o5b1s1t2, den2o3b3s4t1, den4o5b18s2t3, den4o6b34s1t2, den4o6b33s1t1, den4o3b3s4t1
create den4o3b2s4t1, den4o5b4s1t1, den4o5b3s1t1, den4o5b2s1t3, den4o5b1s1t1, den6o2b4s6t3, den6o5b19s2t3
create den6o4b9s3t1, den6o4b6s2t3, den6o5b10s1t1, den6o5b9s1t2, den6o3b2s5t3, den6o5b2s1t1, den6o5b1s1t1
create den5o4b10s3t1, den5o5b18s2t3, den5o5b17s2t2, den5o5b10s1t3, den5o5b9s1t1, den5o4b4s2t3, den5o5b6s1t1
create den5o5b5s1t1, den5o4b2s3t1, den5o5b2s1t1, den5o5b1s1t1, den10o4b12s1t1, den10o4b11s1t1, den10o4b10s2t1
create den10o5b18s1t1, den10o5b17s1t1, den10o4b2s3t1, den10o5b1s2t2, den11o3b5s3t1, den11o4b5s3t2, den11o3b2s4t3
create den11o5b3s2t1, den11o5b2s1t1, den11o5b1s1t2, den8o2b3s6t3, den8o5b4s2t3, den8o5b3s2t2, den8o5b2s2t2
create den8o5b1s2t1, den9o2b3s5t1, den9o2b2s5t3, den9o3b1s3t1, den7o2b1s7t1, ah2, den1o4b11s3t3
create den1o5b20s1t3, den1o5b19s1t1, den1o5b18s1t1, den1o5b17s1t1, den1o6b3s3t1, den1o7b4s1t1, den1o7b3s1t1
create den1o7b1s2t1, den1o7b12s1t1, den1o7b11s1t1, den1o7b10s2t3, den1o7b9s2t1, den1o4b3s5t1, den1o5b14s4t3
create den1o7b44s1t3, den1o7b43s1t1, den1o7b42s1t1, den1o7b41s1t1, den1o6b18s2t3, den1o6b17s2t1, den3o3b4s5t3
create den3o5b10s3t1, den3o5b9s3t1, den3o3b2s5t1, den3o5b4s1t1, den3o5b3s1t1, den3o5b2s2t1, den3o6b2s1t1
create den3o6b1s1t1, den2o4b15s3t1, den2o5b18s3t1, den2o6b34s2t3, den2o7b66s1t3, den2o7b65s1t1, den2o6b10s2t1
create den2o6b9s2t3, den2o5b4s2t3, den2o5b3s2t1, den2o5b2s2t3, den2o6b2s1t3, den2o6b1s1t1, den2o3b3s5t3
create den4o7b68s1t1, den4o7b67s1t1, den4o6b33s2t2, den4o3b3s5t3, den4o3b2s5t1, den4o5b4s2t3, den4o5b3s2t1
create den4o5b1s2t2, den6o4b9s4t1, den6o5b10s2t3, den6o6b18s1t1, den6o6b17s1t1, den6o5b2s2t3, den6o5b1s2t1
create den5o4b10s4t3, den5o6b34s1t1, den5o6b33s1t1, den5o5b9s2t1, den5o5b6s2t3, den5o5b5s2t1, den5o4b2s4t1
create den5o5b2s2t3, den5o5b1s2t1, den10o4b12s2t3, den10o4b11s2t1, den10o4b10s3t3, den10o5b18s2t1, den10o5b17s2t2
create den10o4b2s4t1, den10o6b2s1t1, den10o6b1s1t1, den11o3b5s4t1, den11o5b10s1t3, den11o5b9s1t3, den11o5b3s3t1
create den11o5b2s2t3, den11o6b2s1t2, den11o6b1s1t1, den8o6b6s1t1, den8o6b5s1t1, den8o6b4s1t3, den8o6b3s1t1
create den8o5b1s3t1, den9o2b3s6t3, den9o3b1s4t3, den7o2b1s8t3, ah1, den1o5b19s2t1, den1o5b18s2t3
create den1o5b17s2t1, den1o6b3s4t1, den1o7b4s2t3, den1o7b3s2t1, den1o7b1s3t1, den1o7b12s2t3, den1o7b11s2t1
create den1o7b9s3t3, den1o4b3s6t1, den1o7b43s2t3, den1o7b42s2t1, den1o7b41s2t2, den1o6b17s3t3, den3o5b10s4t1
create den3o5b9s4t1, den3o3b2s6t3, den3o5b4s2t2, den3o5b3s2t1, den3o5b2s3t1, den3o6b2s2t1, den3o6b1s2t2
create den2o4b15s4t1, den2o5b18s4t1, den2o7b65s2t1, den2o6b10s3t1, den2o5b3s3t1, den2o6b1s2t1, den4o7b68s2t3
create den4o7b67s2t1, den4o7b66s1t1, den4o7b65s1t1, den4o3b2s6t2, den4o5b3s3t1, den4o6b2s1t1, den4o6b1s1t1
create den6o4b9s5t1, den6o6b18s2t2, den6o6b17s2t2, den6o5b1s3t1, den5o6b34s2t3, den5o6b33s2t1, den5o5b9s3t1
create den5o5b5s3t1, den5o4b2s5t3, den5o5b1s3t3, den10o4b11s3t3, den10o5b18s3t3, den10o6b34s1t1, den10o6b33s1t1
create den10o4b2s5t3, den10o6b2s2t1, den10o6b1s2t1, den11o3b5s5t3, den11o5b3s4t3, den11o7b4s1t3, den11o7b3s1t1
create den11o6b1s2t1, den8o6b6s2t3, den8o6b5s2t1, den8o6b3s2t1, den8o5b1s4t3, iseg, den1o5b19s3t1
create den1o5b17s3t1, den1o6b3s5t3, den1o7b3s3t3, den1o7b1s4t3, den1o7b11s3t1, den1o4b3s7t3, den1o7b42s3t3
create den1o8b82s1t1, den1o8b81s1t2, den3o5b10s5t1, den3o5b9s5t3, den3o6b8s1t3, den3o6b7s1t1, den3o5b3s3t1
create den3o5b2s4t3, den3o6b2s3t1, den3o7b2s1t1, den3o7b1s1t1, den2o4b15s5t3, den2o5b18s5t3, den2o7b65s3t3
create den2o6b10s4t3, den2o5b3s4t3, den2o6b1s3t1, den4o7b67s3t1, den4o7b66s2t3, den4o7b65s2t1, den4o4b4s1t3
create den4o4b3s1t1, den4o5b3s4t3, den4o6b2s2t3, den4o6b1s2t1, den6o4b9s6t3, den6o7b36s1t1, den6o7b35s1t1
create den6o7b34s1t1, den6o7b33s1t2, den6o5b1s4t1, den5o6b33s3t1, den5o5b9s4t1, den5o5b5s4t1, den10o6b34s2t1
create den10o6b33s2t1, den10o6b2s3t3, den10o6b1s3t1, den11o7b3s2t1, den11o6b1s3t1, den8o6b5s3t1, den8o6b3s3t1
create den1o5b19s4t3, den1o5b17s4t3, den1o7b11s4t1, den1o8b82s2t3, den1o9b162s1t1, den1o9b161s1t1, den3o5b10s6t3
create den3o6b7s2t3, den3o5b3s4t1, den3o6b2s4t1, den3o7b2s2t1, den3o7b1s2t1, den2o6b1s4t2, den4o7b67s4t1
create den4o7b65s3t3, den4o4b3s2t3, den4o6b1s3t1, den6o7b36s2t3, den6o7b35s2t3, den6o7b34s2t3, den6o8b66s1t1
create den6o8b65s1t2, den6o5b1s5t1, den5o6b33s4t3, den5o5b9s5t3, den5o5b5s5t1, den10o6b34s3t1, den10o6b33s3t1
create den10o6b1s4t1, den11o7b3s3t3, den11o6b1s4t1, den8o6b5s4t3, den8o6b3s4t3, den1o7b11s5t3, den1o9b162s2t3
create den1o9b161s2t3, den3o5b3s5t3, den3o6b2s5t1, den3o7b2s3t3, den3o7b1s3t1, den2o7b2s1t3, den2o7b1s1t3
create den4o7b67s5t3, den4o6b1s4t3, den6o8b66s2t1, den6o9b130s1t1, den6o9b129s1t1, den6o5b1s6t3, den5o5b5s6t3
create den10o6b34s4t3, den10o6b33s4t3, den10o6b1s5t3, den11o6b1s5t3, den3o6b2s6t3, den3o7b1s4t3, den6o8b66s3t3
create den6o9b130s2t3, den6o9b129s2t3

proc topol() { local i
  connect ah11(0), soma(0)
  connect den1o0b1s1t2(0), soma(0.5)
  connect den3o0b1s1t1(0), soma(0.5)
  connect den2o0b1s1t2(0), soma(0.5)
  connect den4o0b1s1t2(0), soma(0.5)
  connect den6o0b1s1t2(0), soma(0.5)
  connect den5o0b1s1t2(0), soma(0.5)
  connect den10o0b1s1t1(0), soma(0.5)
  connect den11o0b1s1t1(0), soma(0.5)
  connect den8o0b1s1t2(0), soma(0.5)
  connect den9o0b1s1t1(0), soma(0.5)
  connect den7o0b1s1t2(0), soma(0.5)
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  topol_1()
}
proc topol_1() {
  connect den10o2b4s2t1(0), den10o2b4s1t1(1)
  connect den10o2b3s2t2(0), den10o2b3s1t1(1)
  connect den10o3b2s1t1(0), den10o2b1s2t2(1)
  connect den10o3b1s1t2(0), den10o2b1s2t2(1)
  connect den11o2b4s2t3(0), den11o2b4s1t1(1)
  connect den11o2b3s2t2(0), den11o2b3s1t1(1)
  connect den11o3b4s1t1(0), den11o2b2s2t2(1)
  connect den11o3b3s1t2(0), den11o2b2s2t2(1)
  connect den11o3b2s1t1(0), den11o2b1s2t2(1)
  connect den11o3b1s1t2(0), den11o2b1s2t2(1)
  connect den8o2b3s3t1(0), den8o2b3s2t1(1)
  connect den8o2b2s4t3(0), den8o2b2s3t1(1)
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  topol_2()
}
proc topol_2() {
  connect den1o7b9s1t1(0), den1o6b5s1t2(1)
  connect den1o4b3s4t1(0), den1o4b3s3t1(1)
  connect den1o5b14s3t1(0), den1o5b14s2t1(1)
  connect den1o6b22s1t2(0), den1o5b11s2t2(1)
  connect den1o6b21s1t2(0), den1o5b11s2t2(1)
  connect den1o5b10s3t3(0), den1o5b10s2t1(1)
  connect den1o6b18s1t1(0), den1o5b9s2t2(1)
  connect den1o6b17s1t1(0), den1o5b9s2t2(1)
  connect den3o3b4s4t1(0), den3o3b4s3t1(1)
  connect den3o5b10s2t1(0), den3o5b10s1t1(1)
  connect den3o5b9s2t1(0), den3o5b9s1t1(1)
  connect den3o3b2s4t1(0), den3o3b2s3t1(1)
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  topol_3()
}
proc topol_3() {
  connect den4o7b68s2t3(0), den4o7b68s1t1(1)
  connect den4o7b67s2t1(0), den4o7b67s1t1(1)
  connect den4o7b66s1t1(0), den4o6b33s2t2(1)
  connect den4o7b65s1t1(0), den4o6b33s2t2(1)
  connect den4o3b2s6t2(0), den4o3b2s5t1(1)
  connect den4o5b3s3t1(0), den4o5b3s2t1(1)
  connect den4o6b2s1t1(0), den4o5b1s2t2(1)
  connect den4o6b1s1t1(0), den4o5b1s2t2(1)
  connect den6o4b9s5t1(0), den6o4b9s4t1(1)
  connect den6o6b18s2t2(0), den6o6b18s1t1(1)
  connect den6o6b17s2t2(0), den6o6b17s1t1(1)
  connect den6o5b1s3t1(0), den6o5b1s2t1(1)
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  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, -24.4, 0, 48.8)
	pt3dadd(0, 24.4, 0, 48.8)
  }
  ah11 {pt3dclear()
	pt3dadd(0, 24.4, 0, 13)
	pt3dadd(0, 26.2182, 0, 13)
  }
  den1o0b1s1t2 {pt3dclear()
	pt3dadd(0, 0, 0, 13.25)
	pt3dadd(6, -69, -75, 13.25)
  }
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  }
}
proc shape3d_2() {
  den7o2b1s2t1 {  }
  ah7 {pt3dclear()
	pt3dadd(0, 31.6727, 0, 9)
	pt3dadd(0, 33.4909, 0, 9)
  }
  den1o2b4s2t1 {pt3dclear()
	pt3dadd(-192, -237, -150, 1.59)
	pt3dadd(-384, -332, -150, 1.59)
  }
  den1o2b3s2t2 {pt3dclear()
	pt3dadd(-89, -114, -225, 5.03)
	pt3dadd(-139, -140, -300, 5.03)
  }
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  }
}
proc shape3d_3() {
  den5o3b2s1t1 {  }
  den5o3b1s1t2 {pt3dclear()
	pt3dadd(-177, -200, 300, 3.71)
	pt3dadd(-238, -209, 375, 3.71)
  }
  den10o2b4s2t1 {pt3dclear()
	pt3dadd(297, 24, 300, 1.85)
	pt3dadd(355, 124, 450, 1.85)
  }
  den10o2b3s2t2 {pt3dclear()
	pt3dadd(283, -21, 225, 4.5)
	pt3dadd(342, -49, 225, 4.5)
  }
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  }
}
proc shape3d_4() {
  den9o2b2s3t1 {  }
  den9o3b2s1t3 {pt3dclear()
	pt3dadd(-285, -165, 450, 0.79)
	pt3dadd(-329, -206, 450, 0.79)
  }
  den9o3b1s1t1 {pt3dclear()
	pt3dadd(-285, -165, 450, 1.85)
	pt3dadd(-327, -219, 600, 1.85)
  }
  den7o2b2s5t3 {pt3dclear()
	pt3dadd(-623, 555, -375, 0.79)
	pt3dadd(-651, 715, -600, 0.79)
  }
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  }
}
proc shape3d_5() {
  den1o6b6s2t2 {  }
  den1o7b10s1t1 {pt3dclear()
	pt3dadd(-60, -192, -375, 0.79)
	pt3dadd(-112, -116, -450, 0.79)
  }
  den1o7b9s1t1 {pt3dclear()
	pt3dadd(-60, -192, -375, 1.59)
	pt3dadd(-64, -167, -525, 1.59)
  }
  den1o4b3s4t1 {pt3dclear()
	pt3dadd(-110, -443, -600, 2.38)
	pt3dadd(-133, -617, -750, 2.38)
  }
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  }
}
proc shape3d_6() {
  den1o7b42s1t1 {  }
  den1o7b41s1t1 {pt3dclear()
	pt3dadd(-141, -437, 450, 1.85)
	pt3dadd(-124, -461, 450, 1.85)
  }
  den1o6b18s2t3 {pt3dclear()
	pt3dadd(172, -549, -525, 1.32)
	pt3dadd(210, -706, -675, 1.32)
  }
  den1o6b17s2t1 {pt3dclear()
	pt3dadd(117, -662, -375, 1.32)
	pt3dadd(101, -888, -450, 1.32)
  }
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  }
}
proc shape3d_7() {
  den2o5b3s3t1 {  }
  den2o6b1s2t1 {pt3dclear()
	pt3dadd(676, 45, -600, 1.32)
	pt3dadd(824, 59, -750, 1.32)
  }
  den4o7b68s2t3 {pt3dclear()
	pt3dadd(477, 683, -150, 0.53)
	pt3dadd(519, 814, -150, 0.53)
  }
  den4o7b67s2t1 {pt3dclear()
	pt3dadd(558, 652, -75, 1.32)
	pt3dadd(631, 841, -75, 1.32)
  }
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  }
}
proc shape3d_8() {
  den4o7b67s4t1 {  }
  den4o7b65s3t3 {pt3dclear()
	pt3dadd(365, 1004, 0, 0.53)
	pt3dadd(330, 1124, 75, 0.53)
  }
  den4o4b3s2t3 {pt3dclear()
	pt3dadd(-255, 1033, -825, 0.79)
	pt3dadd(-253, 1075, -825, 0.79)
  }
  den4o6b1s3t1 {pt3dclear()
	pt3dadd(44, 975, -525, 1.06)
	pt3dadd(-151, 957, -525, 1.06)
  }
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
}

objref all, den , Axon
proc subsets() { local i
  objref all, den
  Axon = new SectionList()
  all = new SectionList()
    soma all.append()
    ah11 all.append()
    den1o0b1s1t2 all.append()
    den3o0b1s1t1 all.append()
    den2o0b1s1t2 all.append()
    den4o0b1s1t2 all.append()
    den6o0b1s1t2 all.append()
    den5o0b1s1t2 all.append()
    den10o0b1s1t1 all.append()
    den11o0b1s1t1 all.append()
    den8o0b1s1t2 all.append()
    den9o0b1s1t1 all.append()
    den7o0b1s1t2 all.append()
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  subsets_1()
}
proc subsets_1(){
    den5o3b2s1t1 all.append()
    den5o3b1s1t2 all.append()
    den10o2b4s2t1 all.append()
    den10o2b3s2t2 all.append()
    den10o3b2s1t1 all.append()
    den10o3b1s1t2 all.append()
    den11o2b4s2t3 all.append()
    den11o2b3s2t2 all.append()
    den11o3b4s1t1 all.append()
    den11o3b3s1t2 all.append()
    den11o3b2s1t1 all.append()
    den11o3b1s1t2 all.append()
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  subsets_2()
}
proc subsets_2(){
    den1o6b6s2t2 all.append()
    den1o7b10s1t1 all.append()
    den1o7b9s1t1 all.append()
    den1o4b3s4t1 all.append()
    den1o5b14s3t1 all.append()
    den1o6b22s1t2 all.append()
    den1o6b21s1t2 all.append()
    den1o5b10s3t3 all.append()
    den1o6b18s1t1 all.append()
    den1o6b17s1t1 all.append()
    den3o3b4s4t1 all.append()
    den3o5b10s2t1 all.append()
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  subsets_3()
}
proc subsets_3(){
    den2o5b3s3t1 all.append()
    den2o6b1s2t1 all.append()
    den4o7b68s2t3 all.append()
    den4o7b67s2t1 all.append()
    den4o7b66s1t1 all.append()
    den4o7b65s1t1 all.append()
    den4o3b2s6t2 all.append()
    den4o5b3s3t1 all.append()
    den4o6b2s1t1 all.append()
    den4o6b1s1t1 all.append()
    den6o4b9s5t1 all.append()
    den6o6b18s2t2 all.append()
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    iseg all.append()
    den1o5b19s3t1 all.append()
    den1o5b17s3t1 all.append()
    den1o6b3s5t3 all.append()
    den1o7b3s3t3 all.append()
    den1o7b1s4t3 all.append()
    den1o7b11s3t1 all.append()
    den1o4b3s7t3 all.append()
    den1o7b42s3t3 all.append()
    den1o8b82s1t1 all.append()
    den1o8b81s1t2 all.append()
    den3o5b10s5t1 all.append()
    den3o5b9s5t3 all.append()
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	subsets_4()
}
proc subsets_4() { local i
 objref den
 den = new SectionList()
    den1o0b1s1t2 den.append()
    den3o0b1s1t1 den.append()
    den2o0b1s1t2 den.append()
    den4o0b1s1t2 den.append()
    den6o0b1s1t2 den.append()
    den5o0b1s1t2 den.append()
    den10o0b1s1t1 den.append()
    den11o0b1s1t1 den.append()
    den8o0b1s1t2 den.append()
    den9o0b1s1t1 den.append()
    den7o0b1s1t2 den.append()
    den1o1b2s1t1 den.append()
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  subsets_5()
}
proc subsets_5(){
    den5o3b2s1t1 den.append()
    den5o3b1s1t2 den.append()
    den10o2b4s2t1 den.append()
    den10o2b3s2t2 den.append()
    den10o3b2s1t1 den.append()
    den10o3b1s1t2 den.append()
    den11o2b4s2t3 den.append()
    den11o2b3s2t2 den.append()
    den11o3b4s1t1 den.append()
    den11o3b3s1t2 den.append()
    den11o3b2s1t1 den.append()
    den11o3b1s1t2 den.append()
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  subsets_6()
}
proc subsets_6(){
    den1o6b6s2t2 den.append()
    den1o7b10s1t1 den.append()
    den1o7b9s1t1 den.append()
    den1o4b3s4t1 den.append()
    den1o5b14s3t1 den.append()
    den1o6b22s1t2 den.append()
    den1o6b21s1t2 den.append()
    den1o5b10s3t3 den.append()
    den1o6b18s1t1 den.append()
    den1o6b17s1t1 den.append()
    den3o3b4s4t1 den.append()
    den3o5b10s2t1 den.append()
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  subsets_7()
}
proc subsets_7(){
    den2o5b3s3t1 den.append()
    den2o6b1s2t1 den.append()
    den4o7b68s2t3 den.append()
    den4o7b67s2t1 den.append()
    den4o7b66s1t1 den.append()
    den4o7b65s1t1 den.append()
    den4o3b2s6t2 den.append()
    den4o5b3s3t1 den.append()
    den4o6b2s1t1 den.append()
    den4o6b1s1t1 den.append()
    den6o4b9s5t1 den.append()
    den6o6b18s2t2 den.append()
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}
proc parameters() {
	      celsius = 36			            // Temperature at which simulations are performed
	      Vrest= -70                		// mV, resting membrane potential
}
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Define nseg (the spatial grid) in every segment according to d_lambda

external lambda_f

proc segments_numbers() {

	D_LAMBDA = 0.1
	forall {
		nseg = int((L/(D_LAMBDA*lambda_f(100))+0.9)/2)*2 + 1
	}

} // End of Procedure
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
proc geom() {

	segments_numbers()									// Set the number of segments for every compartment using the d_Lambda rule
}
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Procedure for setting same values in the AxonHillock structure with those in the Initial Segment structure

proc AdjustIsegAH() {

	forsec "ah" {
		gnabar_NafIs = iseg.gnabar_NafIs            				// AH is the same as Iseg
		th_NafIs = 40				   								// Original value = 30 ms
		gnapbar_NapIs = iseg.gnapbar_NapIs          				// AH is the same as Iseg
		gkbar_KdrIs = iseg.gkbar_KdrIs              				// AH is the same as Iseg
		amA_NafIs = iseg.amA_NafIs
		bmA_NafIs = iseg.bmA_NafIs
		theta_h_NafIs = iseg.theta_h_NafIs
		theta_n_KdrIs = iseg.theta_n_KdrIs
		ampB_NapIs = iseg.ampB_NapIs
		bmpB_NapIs = iseg.bmpB_NapIs
	}

} // End of Procedure
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Procedure for setting values for channels

proc UpdateChannels() {

	// Channels for the soma
	//------------------------
	soma.gnabar_NafSm = 0.06   								// Original value = 0.06. Set this value to ZERO to simulate the action of TTX
	th_NafSm = 40	   										// Original value = 30 ms
	soma.amA_NafSm = 14
	soma.bmA_NafSm = 38
	soma.theta_h_NafSm = 55

	soma.gkdrbar_KdrSm = 0.80048 								// Original value = 0.80048. Set this value to ZERO to simulate the action of TEA
	soma.theta_n_KdrSm = 28

	soma.gkcabar_CaSm = 0.03 								// Original value = 0.02. Set this value to ZERO to simulate the action of Apamin
	soma.gcanbar_CaSm = 0.01								// Original value = 0.01.
	soma.gcalbar_CaSm = 0									// 5e-6 is used to show firing rate adaptation in a model with passive dendrites
	soma.thetamn_CaSm = 22
	soma.thetahn_CaSm = 40
	// Calcium Dynamics
	soma.f_CaSm = 0.005
	soma.alpha_CaSm = 1
	soma.kca_CaSm = 23
	soma.kd_CaSm = 0.0002             								// If kd is 0.0005, then Kca is 0.02. If kd is 0.0002, then Kca is 0.01
	soma.nexp_CaSm = 1

	// Channels for the Iseg and AH
	//------------------------------
	iseg.gnabar_NafIs = 1.3392  								// Original value = 1.3392. Set this value to ZERO to simulate the action of TTX
	th_NafIs = 40	   									// Original value = 30 ms
	iseg.amA_NafIs = 10
	iseg.bmA_NafIs = 30
	iseg.theta_h_NafIs = 55

	iseg.gnapbar_NapIs = (3.2971e-5)							// Original value = 3.2971e-5
	iseg.ampB_NapIs = 38.4
	iseg.bmpB_NapIs = 42.7

	iseg.gkbar_KdrIs = 0.16552 								// Original value = 0.16552. Set this value to ZERO to simulate the action of TEA
	iseg.theta_n_KdrIs = 28

	AdjustIsegAH()
} // End of Procedure
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Procedure to block required channels

proc BlockChannels() {

	// Channels for the soma
	//------------------------
	soma.gnabar_NafSm = 0									// Original value = 0.06. Set this value to ZERO to simulate the action of TTX
	soma.gkdrbar_KdrSm = 0									// Original value = 0.80048. Set this value to ZERO to simulate the action of TEA
	soma.gkcabar_CaSm = 0									// Original value = 0.02. Set this value to ZERO to simulate the action of Apamin
	soma.gcanbar_CaSm = 0									// Original value = 0.01.
	soma.gcalbar_CaSm = 0									// 5e-6 is used to show firing rate adaptation in a model with passive dendrites

	// Channels for the Iseg and AH
	//------------------------------
	iseg.gnabar_NafIs = 0									// Original value = 1.3392. Set this value to ZERO to simulate the action of TTX
	iseg.gnapbar_NapIs = 0									// Original value = 3.2971e-5
	iseg.gkbar_KdrIs = 0									// Original value = 0.16552. Set this value to ZERO to simulate the action of TEA

	AdjustIsegAH()

} // End of Procedure



//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

proc biophys() {
	soma {
		insert NafSm								// Fast Na Channels
		insert KdrSm								// Delayed Rectifier Channels
		insert CaSm									// Calcium-activated K Channels + Calcium Channels (L-type, N-type) + Calcium Dynamics

//		insert h			ghbar_h = 0.001				// Inward rectifier current
												// When present, make Vrest = -109 to get Vrest =-74 and sag ratio=1.4

		insert pas      		g_pas=(1/225)       //S/cm2//		// normal values: 1/225
		                		e_pas= Vrest       //mv//		// normal value:  Vrest

		Ra = 70          		//ohm.cm//    				// normal value: 70
		cm = 0.5         		//uf/cm2//   				// normal value: 1

		//insert info
	}
  iseg {
    insert NafIs								// Fast Na Channels
    insert NapIs								// Persistent Na Channels
  	insert KdrIs								// Delayed Rectifier K Channels

//      	insert h			ghbar_h = 0.001				// Inward rectifier current
  											// When present, make Vrest = -109 to get Vrest =-74 and sag ratio=1.4

  	insert pas      		g_pas=(1/225)       //S/cm2//		// normal values: 1/225
  	                		e_pas= Vrest       //mv//		// normal value:  Vrest

  	Ra = 70              	//ohm.cm//					// normal value: 70
  	cm = 0.5         		//uf/cm2//					// normal value: 1

//insert info
}
      forsec "ah" {
      	insert NafIs								// Fast Na Channels
      	insert NapIs								// Persistent Na Channels
      	insert KdrIs								// Delayed Rectifier K Channels

//      	insert h			ghbar_h = 0.001				// Inward rectifier current
      											// When present, make Vrest = -109 to get Vrest =-74 and sag ratio=1.4

      	insert pas      		g_pas=(1/225)       //S/cm2//		// normal value: 1/225
      	                		e_pas= Vrest       //mv//		// normal value:  Vrest

      	Ra = 70           	//ohm.cm//					// normal value: 70
      	cm = 0.5         		//uf/cm2//					// normal value: 1

		//insert info
	  }
      forsec "den" {
//      	insert h			ghbar_h = 0.002				// Inward rectifier current
      											// When present, make Vrest = -109 to get Vrest =-74 and sag ratio=1.4

      	insert pas      		g_pas=(1/11000)     //S/cm2//		// normal value: 1/11000
      	                		e_pas= Vrest       //mv//		// normal value:  Vrest

      	Ra = 70          		//ohm.cm//					// normal value: 70
      	cm = 0.5         		//uf/cm2//					// normal value: 1
		insert info
	  }


	UpdateChannels()                    					// Set the new values for the channels. This makes the firing threshold at -62 mV.

	Vspike = 0		//ShiftThreshold(0)                 				// Set the firing threshold at -62 mV (X=0). Firing threshold = -62 mV + X; X has a sign
}

proc biophys_inhomo(){}

proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

obfunc connect2target() { localobj nc 						//$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = -20
  if (numarg() == 2) { $o2 = nc } 							// for backward compatibility
  return nc
}

func is_art() { return 0 }

//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Procedure for shifting the model firing threshold. This is done by shifting the activation and inactivation curves
// of all channels in the model.

func ShiftThreshold() {local r

	// Channels for the soma
	//------------------------
	soma.amA_NafSm = 14 + $1
	soma.bmA_NafSm = 38 + $1
	soma.theta_h_NafSm = 55 - $1
	soma.theta_n_KdrSm = 28 - $1
	soma.thetamn_CaSm = 22 - $1
	soma.thetahn_CaSm = 40 - $1


	// Channels for the Iseg and AH
	//------------------------------
	iseg.amA_NafIs = 10 + $1
	iseg.bmA_NafIs = 30 + $1
	iseg.theta_h_NafIs = 55 - $1
	iseg.theta_n_KdrIs = 28 - $1
	iseg.ampB_NapIs = 38.4 - $1
	iseg.bmpB_NapIs = 42.7 - $1
	forsec "ah" {
		amA_NafIs = iseg.amA_NafIs
		bmA_NafIs = iseg.bmA_NafIs
		theta_h_NafIs = iseg.theta_h_NafIs
		theta_n_KdrIs = iseg.theta_n_KdrIs
		ampB_NapIs = iseg.ampB_NapIs
		bmpB_NapIs = iseg.bmpB_NapIs
	}
	r = -62 + $1

	return r

} // End of Procedure

//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////


// process for blocking channels for measuring the input  resistance
proc uninsert_Active_channels(){
    soma {
        uninsert NafSm
        uninsert KdrSm
        uninsert CaSm
    }
    iseg {
        uninsert NafIs
        uninsert KdrIs
        uninsert NapIs
    }
    forsec "ah" {
        uninsert NafIs
        uninsert KdrIs
        uninsert NapIs
    }

    forsec "den"{
        uninsert Llva
    }
    print "Active channels has been removed from Soma , iseg , ah sections, and dendrites too"
}

endtemplate FR_Cell
