//execute1("celltypes.element(\"S_Cell\")")

begintemplate S_Cell
objref this
public is_art
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synIAlist, synIBlist, synIClist, synIDlist							// Synapse lists (group A, B, C, D) for system I
public synIIAlist, synIIBlist, synIIClist, synIIDlist							// Synapse lists (group A, B, C, D) for system II
public ncIAlist, ncIBlist, ncIClist, ncIDlist								// Netcon lists (group A, B, C, D) for system I
public ncIIAlist, ncIIBlist, ncIIClist, ncIIDlist							// Netcon lists (group A, B, C, D) for system II
public nsIlist, nsIIlist											// Netstim list driving groups A, B, C, and D in order for systems I and II
public ShiftThreshold, parameters, x, y, z, position, connect2target, Vspike, Vrest
public TwitchForce, TwitchTime
public nf, rfVec, PhiCount													// New publics for EMG model

// new publics for graded potential method of adding synapses to cells
public NS_A_sysI, NS_B_sysI, NS_C_sysI, NS_D_sysI, NS_A_sysII, NS_B_sysII, NS_C_sysII, NS_D_sysII
public Medial_Syn_sysI, Lateral_Syn_sysI, Dorsal_Syn_sysI, Ventral_Syn_sysI, Rostral_Syn_sysI, Caudal_Syn_sysI
public Medial_Syn_sysII, Lateral_Syn_sysII, Dorsal_Syn_sysII, Ventral_Syn_sysII, Rostral_Syn_sysII, Caudal_Syn_sysII
public Den1_Syn, Den2_Syn, Den3_Syn, Den4_Syn, Den5_Syn, Den6_Syn, Den7_Syn, Den8_Syn, Den9_Syn, Den10_Syn, Den11_Syn
public TotalSysISynNumber, TotalSysIISynNumber, SconductanceVec_SysI, SysISyn, SysIISyn, SysI_NC, SysII_NC
public CreateSysISyn, TotalArea, SconductanceVec_SysII, InitialSysIWeights, InitialSysIIWeights
public SectionArea, NumSysISynapsesPerSection, NumSysIISynapsesPerSection, Gsynapse

public soma, ah11, den10o0b1s1t2, den9o0b1s1t2, den8o0b1s1t1, den7o0b1s1t1, den6o0b1s1t2
public den5o0b1s1t1, den4o0b1s1t2, den3o0b1s1t2, den2o0b1s1t1, den1o0b1s1t2, ah10, den10o1b2s1t1
public den10o1b1s1t2, den9o1b2s1t1, den9o1b1s1t1, den8o0b1s2t2, den7o0b1s2t2, den6o1b2s1t1, den6o1b1s1t2
public den5o0b1s2t2, den4o1b2s1t2, den4o1b1s1t1, den3o1b2s1t1, den3o1b1s1t1, den2o0b1s2t2, den1o1b2s1t1
public den1o1b1s1t1, ah9, den10o1b2s2t2, den10o2b2s1t2, den10o2b1s1t1, den9o1b2s2t2, den9o1b1s2t2
public den8o1b2s1t2, den8o1b1s1t2, den7o1b2s1t1, den7o1b1s1t2, den6o1b2s2t2, den6o2b2s1t1, den6o2b1s1t2
public den5o1b2s1t1, den5o1b1s1t2, den4o2b4s1t1, den4o2b3s1t1, den4o1b1s2t2, den3o1b2s2t1, den3o1b1s2t2
public den2o1b2s1t1, den2o1b1s1t1, den1o1b2s2t2, den1o1b1s2t2, ah8, den10o2b4s1t1, den10o2b3s1t1
public den10o3b4s1t1, den10o3b3s1t1, den10o2b1s2t2, den9o2b4s1t1, den9o2b3s1t1, den9o2b2s1t1, den9o2b1s1t1
public den8o2b4s1t1, den8o2b3s1t2, den8o2b2s1t1, den8o2b1s1t1, den7o1b2s2t2, den7o2b2s1t2, den7o2b1s1t1
public den6o2b4s1t1, den6o2b3s1t1, den6o2b2s2t2, den6o3b2s1t1, den6o3b1s1t2, den5o1b2s2t2, den5o2b2s1t1
public den5o2b1s1t1, den4o2b4s2t2, den4o2b3s2t1, den4o2b2s1t1, den4o2b1s1t1, den3o1b2s3t1, den3o2b2s1t1
public den3o2b1s1t2, den2o1b2s2t2, den2o1b1s2t2, den1o2b4s1t1, den1o2b3s1t1, den1o2b2s1t1, den1o2b1s1t1
public ah7, den10o2b4s2t2, den10o2b3s2t1, den10o3b4s2t2, den10o3b3s2t1, den10o3b2s1t1, den10o3b1s1t1
public den9o2b4s2t3, den9o2b3s2t1, den9o2b2s2t2, den9o2b1s2t1, den8o2b4s2t1, den8o3b6s1t1, den8o3b5s1t2
public den8o2b2s2t2, den8o2b1s2t1, den7o2b4s1t1, den7o2b3s1t1, den7o3b4s1t1, den7o3b3s1t2, den7o2b1s2t3
public den6o2b4s2t1, den6o2b3s2t2, den6o3b4s1t2, den6o3b3s1t1, den6o3b2s2t2, den6o4b2s1t1, den6o4b1s1t1
public den5o2b4s1t1, den5o2b3s1t1, den5o2b2s2t2, den5o2b1s2t1, den4o3b8s1t1, den4o3b7s1t1, den4o2b3s3t2
public den4o2b2s2t2, den4o2b1s2t2, den3o1b2s4t1, den3o2b2s2t2, den3o3b2s1t1, den3o3b1s1t1, den2o2b4s1t1
public den2o2b3s1t1, den2o2b2s1t1, den2o2b1s1t2, den1o2b4s2t2, den1o2b3s2t1, den1o2b2s2t1, den1o2b1s2t1
public ah6, den10o3b8s1t1, den10o3b7s1t1, den10o2b3s3t3, den10o4b8s1t1, den10o4b7s1t2, den10o3b3s3t3
public den10o3b2s2t2, den10o3b1s2t2, den9o2b3s3t3, den9o3b4s1t1, den9o3b3s1t1, den9o2b1s3t2, den8o2b4s3t1
public den8o3b6s2t1, den8o4b10s1t1, den8o4b9s1t1, den8o3b4s1t1, den8o3b3s1t1, den8o2b1s3t1, den7o2b4s2t3
public den7o2b3s2t1, den7o3b4s2t2, den7o4b6s1t1, den7o4b5s1t1, den6o2b4s3t1, den6o3b6s1t1, den6o3b5s1t1
public den6o4b8s1t1, den6o4b7s1t1, den6o3b3s2t3, den6o4b4s1t1, den6o4b3s1t1, den6o4b2s2t2, den6o4b1s2t2
public den5o2b4s2t1, den5o2b3s2t2, den5o3b4s1t1, den5o3b3s1t1, den5o2b1s3t1, den4o3b8s2t2, den4o3b7s2t1
public den4o3b6s1t1, den4o3b5s1t1, den4o3b4s1t1, den4o3b3s1t1, den4o3b2s1t1, den4o3b1s1t1, den3o1b2s5t1
public den3o3b4s1t1, den3o3b3s1t1, den3o3b2s2t1, den3o3b1s2t2, den2o2b4s2t1, den2o2b3s2t1, den2o2b2s2t2
public den2o3b2s1t1, den2o3b1s1t2, den1o3b8s1t2, den1o3b7s1t1, den1o2b3s3t3, den1o2b2s3t1, den1o2b1s3t3
public ah5, den10o3b8s2t1, den10o3b7s2t3, den10o4b8s2t1, den10o5b14s1t1, den10o5b13s1t1, den10o4b4s1t1
public den10o4b3s1t2, den10o4b2s1t1, den10o4b1s1t1, den9o3b4s2t2, den9o3b3s2t1, den9o3b2s1t1, den9o3b1s1t1
public den8o2b4s4t1, den8o3b6s3t1, den8o4b10s2t2, den8o4b9s2t2, den8o3b4s2t1, den8o3b3s2t3, den8o2b1s4t3
public den7o2b3s3t1, den7o4b8s1t2, den7o4b7s1t1, den7o4b6s2t1, den7o4b5s2t1, den6o2b4s4t3, den6o3b6s2t2
public den6o3b5s2t2, den6o4b8s2t2, den6o4b7s2t1, den6o4b4s2t1, den6o4b3s2t1, den6o5b4s1t3, den6o5b3s1t1
public den6o5b2s1t1, den6o5b1s1t1, den5o2b4s3t1, den5o3b6s1t1, den5o3b5s1t1, den5o3b4s2t2, den5o3b3s2t1
public den5o2b1s4t2, den4o4b16s1t1, den4o4b15s1t2, den4o3b7s3t3, den4o3b6s2t3, den4o3b5s2t3, den4o3b4s2t2
public den4o3b3s2t3, den4o3b2s2t2, den4o3b1s2t2, den3o1b2s6t3, den3o3b4s2t2, den3o3b3s2t2, den3o3b2s3t1
public den3o4b2s1t1, den3o4b1s1t1, den2o2b4s3t2, den2o2b3s3t2, den2o3b4s1t1, den2o3b3s1t1, den2o3b2s2t1
public den2o4b2s1t1, den2o4b1s1t2, den1o4b16s1t1, den1o4b15s1t1, den1o3b7s2t1, den1o2b2s4t1, ah4
public den10o3b8s3t3, den10o4b8s3t1, den10o5b14s2t3, den10o5b13s2t2, den10o4b4s2t2, den10o5b6s1t3, den10o5b5s1t1
public den10o4b2s2t3, den10o4b1s2t2, den9o4b8s1t2, den9o4b7s1t1, den9o3b3s3t3, den9o3b2s2t1, den9o3b1s2t2
public den8o2b4s5t3, den8o3b6s4t3, den8o5b20s1t1, den8o5b19s1t1, den8o5b18s1t1, den8o5b17s1t1, den8o3b4s3t3
public den7o2b3s4t3, den7o5b16s1t1, den7o5b15s1t1, den7o4b7s2t1, den7o4b6s3t3, den7o4b5s3t1, den6o4b12s1t3
public den6o4b11s1t1, den6o4b10s1t1, den6o4b9s1t3, den6o5b16s1t1, den6o5b15s1t1, den6o4b7s3t1, den6o4b4s3t1
public den6o4b3s3t3, den6o5b3s2t1, den6o5b2s2t2, den6o5b1s2t2, den5o2b4s4t3, den5o3b6s2t3, den5o3b5s2t1
public den5o4b8s1t1, den5o4b7s1t1, den5o3b3s3t1, den5o3b2s1t1, den5o3b1s1t1, den4o4b16s2t2, den4o5b30s1t1
public den4o5b29s1t2, den4o4b8s1t1, den4o4b7s1t1, den4o4b4s1t1, den4o4b3s1t1, den4o4b2s1t1, den4o4b1s1t2
public den3o4b8s1t1, den3o4b7s1t1, den3o4b6s1t1, den3o4b5s1t1, den3o3b2s4t1, den3o4b2s2t2, den3o4b1s2t1
public den2o3b8s1t1, den2o3b7s1t1, den2o3b6s1t1, den2o3b5s1t1, den2o3b4s2t1, den2o3b3s2t2, den2o3b2s3t2
public den2o4b2s2t1, den2o5b2s1t1, den2o5b1s1t1, den1o4b16s2t3, den1o4b15s2t3, den1o3b7s3t1, den1o2b2s5t1
public ah3, den10o4b8s4t3, den10o6b26s1t1, den10o6b25s1t1, den10o5b8s1t1, den10o5b7s1t1, den10o5b5s2t3
public den10o5b2s1t1, den10o5b1s1t3, den9o5b16s1t1, den9o5b15s1t1, den9o4b7s2t3, den9o3b2s3t3, den9o4b2s1t1
public den9o4b1s1t1, den8o5b20s2t3, den8o5b19s2t1, den8o5b18s2t3, den8o5b17s2t2, den7o5b16s2t3, den7o5b15s2t1
public den7o4b7s3t3, den7o4b5s4t3, den6o4b11s2t1, den6o4b10s2t3, den6o5b16s2t1, den6o5b15s2t3, den6o4b7s4t3
public den6o4b4s4t3, den6o5b3s3t1, den6o6b4s1t1, den6o6b3s1t1, den6o6b2s1t1, den6o6b1s1t2, den5o3b5s3t1
public den5o4b8s2t3, den5o4b7s2t3, den5o3b3s4t3, den5o3b2s2t3, den5o3b1s2t3, den4o5b32s1t1, den4o5b31s1t1
public den4o5b30s2t2, den4o6b58s1t3, den4o6b57s1t1, den4o4b8s2t3, den4o4b7s2t3, den4o4b4s2t1, den4o4b3s2t1
public den4o4b2s2t2, den4o5b2s1t1, den4o5b1s1t1, den3o4b8s2t3, den3o4b7s2t3, den3o4b6s2t3, den3o4b5s2t1
public den3o3b2s5t1, den3o5b4s1t1, den3o5b3s1t1, den3o4b1s3t2, den2o3b8s2t3, den2o3b7s2t2, den2o3b6s2t1
public den2o3b5s2t1, den2o3b4s3t1, den2o4b6s1t1, den2o4b5s1t1, den2o4b4s1t3, den2o4b3s1t1, den2o4b2s3t1
public den2o5b2s2t2, den2o5b1s2t1, den1o3b7s4t3, den1o2b2s6t3, ah2, den10o6b26s2t1, den10o6b25s2t3
public den10o5b8s2t3, den10o5b7s2t2, den10o5b2s2t3, den9o5b16s2t3, den9o5b15s2t3, den9o4b2s2t3, den9o4b1s2t3
public den8o5b19s3t3, den8o6b34s1t2, den8o6b33s1t1, den7o5b15s3t1, den6o4b11s3t1, den6o5b16s3t1, den6o5b3s4t2
public den6o6b4s2t3, den6o6b3s2t2, den6o6b2s2t1, den6o7b2s1t1, den6o7b1s1t1, den5o3b5s4t3, den4o5b32s2t1
public den4o5b31s2t3, den4o6b60s1t1, den4o6b59s1t1, den4o6b57s2t1, den4o4b4s3t1, den4o4b3s3t1, den4o5b4s1t1
public den4o5b3s1t1, den4o5b2s2t3, den4o5b1s2t3, den3o4b5s3t1, den3o3b2s6t1, den3o5b4s2t1, den3o5b3s2t1
public den3o5b2s1t1, den3o5b1s1t2, den2o4b14s1t2, den2o4b13s1t1, den2o3b6s3t3, den2o3b5s3t3, den2o3b4s4t2
public den2o4b6s2t2, den2o4b5s2t2, den2o4b3s2t2, den2o4b2s4t3, den2o6b4s1t1, den2o6b3s1t1, den2o5b1s3t3
public ah1, den10o6b26s3t3, den10o6b14s1t3, den10o6b13s1t1, den8o7b68s1t3, den8o7b67s1t3, den8o6b33s2t1
public den7o5b15s4t3, den6o4b11s4t3, den6o5b16s4t3, den6o6b6s1t1, den6o6b5s1t1, den6o7b6s1t1, den6o7b5s1t1
public den6o6b2s3t3, den6o7b2s2t2, den6o7b1s2t1, den4o5b32s3t1, den4o6b60s2t3, den4o6b59s2t3, den4o6b57s3t1
public den4o4b4s4t3, den4o4b3s4t3, den4o5b4s2t1, den4o5b3s2t3, den3o4b5s4t1, den3o3b2s7t1, den3o5b4s3t1
public den3o5b3s3t3, den3o5b2s2t3, den3o6b2s1t1, den3o6b1s1t1, den2o5b28s1t1, den2o5b27s1t2, den2o4b13s2t3
public den2o4b8s1t3, den2o4b7s1t3, den2o5b12s1t1, den2o5b11s1t3, den2o5b10s1t1, den2o5b9s1t3, den2o5b6s1t1
public den2o5b5s1t1, den2o6b4s2t1, den2o6b3s2t3, iseg, den10o6b13s2t3, den8o6b33s3t2, den6o6b6s2t3
public den6o6b5s2t2, den6o7b6s2t3, den6o7b5s2t2, den6o8b4s1t1, den6o8b3s1t1, den6o7b1s3t1, den4o5b32s4t1
public den4o6b57s4t3, den4o5b4s3t1, den3o4b5s5t3, den3o3b2s8t1, den3o5b4s4t3, den3o6b2s2t3, den3o6b1s2t3
public den2o5b28s2t3, den2o6b54s1t1, den2o6b53s1t1, den2o5b12s2t3, den2o5b10s2t3, den2o5b6s2t3, den2o5b5s2t3
public den2o6b4s3t3, den8o7b66s1t1, den8o7b65s1t1, den6o7b10s1t1, den6o7b9s1t3, den6o8b10s1t1, den6o8b9s1t1
public den6o8b4s2t3, den6o8b3s2t2, den6o7b1s4t3, den4o5b32s5t3, den4o5b4s4t3, den3o3b2s9t3, den2o6b54s2t3
public den2o6b53s2t3, den8o7b66s2t3, den8o7b65s2t3, den6o7b10s2t3, den6o8b10s2t3, den6o8b9s2t3, den6o9b6s1t1
public den6o9b5s1t1, den6o9b6s2t1, den6o9b5s2t1, den6o9b6s3t3, den6o9b5s3t3
public all, den, ah , Axon

objref synlist

objref synIAlist, synIBlist, synIClist, synIDlist							// Synapse lists (group A, B, C, D) for system I
objref synIIAlist, synIIBlist, synIIClist, synIIDlist							// Synapse lists (group A, B, C, D) for system II
objref ncIAlist, ncIBlist, ncIClist, ncIDlist								// Netcon lists (group A, B, C, D) for system I
objref ncIIAlist, ncIIBlist, ncIIClist, ncIIDlist							// Netcon lists (group A, B, C, D) for system II
objref nsIlist, nsIIlist											// Netstim list driving groups A, B, C, and D in order for systems I and II
objref NS_A_sysI, NS_B_sysI, NS_C_sysI, NS_D_sysI, NS_A_sysII, NS_B_sysII, NS_C_sysII, NS_D_sysII
objref Medial_Syn_sysI, Lateral_Syn_sysI, Dorsal_Syn_sysI, Ventral_Syn_sysI, Caudal_Syn_sysI, Rostral_Syn_sysI
objref Medial_Syn_sysII, Lateral_Syn_sysII, Dorsal_Syn_sysII, Ventral_Syn_sysII, Caudal_Syn_sysII, Rostral_Syn_sysII
objref Den1_Syn, Den2_Syn, Den3_Syn, Den4_Syn, Den5_Syn, Den6_Syn, Den7_Syn, Den8_Syn, Den9_Syn, Den10_Syn, Den11_Syn
objref SconductanceVec_SysI, SconductanceVec_SysII, SysISyn[2526], SysIISyn[2526]
objref SysI_NC[2526], SysII_NC[2526], InitialSysIWeights, InitialSysIIWeights
objref rfVec, PhiCount												// New objrefs for EMG model

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()

  synIAlist = new List()  synIBlist = new List()  synIClist = new List()  synIDlist = new List()		// Synapse lists (group A, B, C, D) for system I
  synIIAlist = new List()  synIIBlist = new List()  synIIClist = new List()  synIIDlist = new List()		// Synapse lists (group A, B, C, D) for system II
  ncIAlist = new List()  ncIBlist = new List()  ncIClist = new List()  ncIDlist = new List()			// Netcon lists (group A, B, C, D) for system I
  ncIIAlist = new List()  ncIIBlist = new List()  ncIIClist = new List()  ncIIDlist = new List()		// Netcon lists (group A, B, C, D) for system II
  nsIlist = new List()															// Netstim list driving groups A, B, C, D , for system I
  nsIIlist = new List()															// Netstim list driving groups A, B, C, D , for system II
  SysISyn = new List()
  SysIISyn = new List()
  SysI_NC = new List()
  SysII_NC = new List()
  PhiCount = new List()															//Electrode potential list

    Medial_Syn_sysI = new Vector()	 Lateral_Syn_sysI = new Vector() 	Dorsal_Syn_sysI = new Vector()
	Ventral_Syn_sysI = new Vector()	 Caudal_Syn_sysI = new Vector() 	Rostral_Syn_sysI = new Vector()
	Medial_Syn_sysII = new Vector()  Lateral_Syn_sysII = new Vector() 	Dorsal_Syn_sysII = new Vector()
	Ventral_Syn_sysII = new Vector() Caudal_Syn_sysII = new Vector()	Rostral_Syn_sysII = new Vector()

	Den1_Syn = new Vector() 	Den2_Syn = new Vector() 	Den3_Syn = new Vector() 	Den4_Syn = new Vector()
	Den5_Syn = new Vector() 	Den6_Syn = new Vector() 	Den7_Syn = new Vector() 	Den8_Syn = new Vector()
	Den9_Syn = new Vector() 	Den10_Syn = new Vector()	Den11_Syn = new Vector()

	SconductanceVec_SysI = new Vector()
	SconductanceVec_SysII = new Vector ()
	InitialSysIWeights = new Vector()	InitialSysIIWeights = new Vector()
	rfVec = new Vector()		//vector of fiber radii

  TotalSysISynNumber = 0 //initialize this variable.
  TotalSysIISynNumber = 0
  TotalArea = 0
  SectionArea = 0
  Gsynapse = 0
  NumSysISynapsesPerSection = 0
  NumSysIISynapsesPerSection = 0
  x = y = z = 0 // only change via position
  TwitchForce = 0
  TwitchTime = 0
  nf = 0											// number of muscle fibers -- initialize to 0.
}

create soma, ah11, den10o0b1s1t2, den9o0b1s1t2, den8o0b1s1t1, den7o0b1s1t1, den6o0b1s1t2
create den5o0b1s1t1, den4o0b1s1t2, den3o0b1s1t2, den2o0b1s1t1, den1o0b1s1t2, ah10, den10o1b2s1t1
create den10o1b1s1t2, den9o1b2s1t1, den9o1b1s1t1, den8o0b1s2t2, den7o0b1s2t2, den6o1b2s1t1, den6o1b1s1t2
create den5o0b1s2t2, den4o1b2s1t2, den4o1b1s1t1, den3o1b2s1t1, den3o1b1s1t1, den2o0b1s2t2, den1o1b2s1t1
create den1o1b1s1t1, ah9, den10o1b2s2t2, den10o2b2s1t2, den10o2b1s1t1, den9o1b2s2t2, den9o1b1s2t2
create den8o1b2s1t2, den8o1b1s1t2, den7o1b2s1t1, den7o1b1s1t2, den6o1b2s2t2, den6o2b2s1t1, den6o2b1s1t2
create den5o1b2s1t1, den5o1b1s1t2, den4o2b4s1t1, den4o2b3s1t1, den4o1b1s2t2, den3o1b2s2t1, den3o1b1s2t2
create den2o1b2s1t1, den2o1b1s1t1, den1o1b2s2t2, den1o1b1s2t2, ah8, den10o2b4s1t1, den10o2b3s1t1
create den10o3b4s1t1, den10o3b3s1t1, den10o2b1s2t2, den9o2b4s1t1, den9o2b3s1t1, den9o2b2s1t1, den9o2b1s1t1
create den8o2b4s1t1, den8o2b3s1t2, den8o2b2s1t1, den8o2b1s1t1, den7o1b2s2t2, den7o2b2s1t2, den7o2b1s1t1
create den6o2b4s1t1, den6o2b3s1t1, den6o2b2s2t2, den6o3b2s1t1, den6o3b1s1t2, den5o1b2s2t2, den5o2b2s1t1
create den5o2b1s1t1, den4o2b4s2t2, den4o2b3s2t1, den4o2b2s1t1, den4o2b1s1t1, den3o1b2s3t1, den3o2b2s1t1
create den3o2b1s1t2, den2o1b2s2t2, den2o1b1s2t2, den1o2b4s1t1, den1o2b3s1t1, den1o2b2s1t1, den1o2b1s1t1
create ah7, den10o2b4s2t2, den10o2b3s2t1, den10o3b4s2t2, den10o3b3s2t1, den10o3b2s1t1, den10o3b1s1t1
create den9o2b4s2t3, den9o2b3s2t1, den9o2b2s2t2, den9o2b1s2t1, den8o2b4s2t1, den8o3b6s1t1, den8o3b5s1t2
create den8o2b2s2t2, den8o2b1s2t1, den7o2b4s1t1, den7o2b3s1t1, den7o3b4s1t1, den7o3b3s1t2, den7o2b1s2t3
create den6o2b4s2t1, den6o2b3s2t2, den6o3b4s1t2, den6o3b3s1t1, den6o3b2s2t2, den6o4b2s1t1, den6o4b1s1t1
create den5o2b4s1t1, den5o2b3s1t1, den5o2b2s2t2, den5o2b1s2t1, den4o3b8s1t1, den4o3b7s1t1, den4o2b3s3t2
create den4o2b2s2t2, den4o2b1s2t2, den3o1b2s4t1, den3o2b2s2t2, den3o3b2s1t1, den3o3b1s1t1, den2o2b4s1t1
create den2o2b3s1t1, den2o2b2s1t1, den2o2b1s1t2, den1o2b4s2t2, den1o2b3s2t1, den1o2b2s2t1, den1o2b1s2t1
create ah6, den10o3b8s1t1, den10o3b7s1t1, den10o2b3s3t3, den10o4b8s1t1, den10o4b7s1t2, den10o3b3s3t3
create den10o3b2s2t2, den10o3b1s2t2, den9o2b3s3t3, den9o3b4s1t1, den9o3b3s1t1, den9o2b1s3t2, den8o2b4s3t1
create den8o3b6s2t1, den8o4b10s1t1, den8o4b9s1t1, den8o3b4s1t1, den8o3b3s1t1, den8o2b1s3t1, den7o2b4s2t3
create den7o2b3s2t1, den7o3b4s2t2, den7o4b6s1t1, den7o4b5s1t1, den6o2b4s3t1, den6o3b6s1t1, den6o3b5s1t1
create den6o4b8s1t1, den6o4b7s1t1, den6o3b3s2t3, den6o4b4s1t1, den6o4b3s1t1, den6o4b2s2t2, den6o4b1s2t2
create den5o2b4s2t1, den5o2b3s2t2, den5o3b4s1t1, den5o3b3s1t1, den5o2b1s3t1, den4o3b8s2t2, den4o3b7s2t1
create den4o3b6s1t1, den4o3b5s1t1, den4o3b4s1t1, den4o3b3s1t1, den4o3b2s1t1, den4o3b1s1t1, den3o1b2s5t1
create den3o3b4s1t1, den3o3b3s1t1, den3o3b2s2t1, den3o3b1s2t2, den2o2b4s2t1, den2o2b3s2t1, den2o2b2s2t2
create den2o3b2s1t1, den2o3b1s1t2, den1o3b8s1t2, den1o3b7s1t1, den1o2b3s3t3, den1o2b2s3t1, den1o2b1s3t3
create ah5, den10o3b8s2t1, den10o3b7s2t3, den10o4b8s2t1, den10o5b14s1t1, den10o5b13s1t1, den10o4b4s1t1
create den10o4b3s1t2, den10o4b2s1t1, den10o4b1s1t1, den9o3b4s2t2, den9o3b3s2t1, den9o3b2s1t1, den9o3b1s1t1
create den8o2b4s4t1, den8o3b6s3t1, den8o4b10s2t2, den8o4b9s2t2, den8o3b4s2t1, den8o3b3s2t3, den8o2b1s4t3
create den7o2b3s3t1, den7o4b8s1t2, den7o4b7s1t1, den7o4b6s2t1, den7o4b5s2t1, den6o2b4s4t3, den6o3b6s2t2
create den6o3b5s2t2, den6o4b8s2t2, den6o4b7s2t1, den6o4b4s2t1, den6o4b3s2t1, den6o5b4s1t3, den6o5b3s1t1
create den6o5b2s1t1, den6o5b1s1t1, den5o2b4s3t1, den5o3b6s1t1, den5o3b5s1t1, den5o3b4s2t2, den5o3b3s2t1
create den5o2b1s4t2, den4o4b16s1t1, den4o4b15s1t2, den4o3b7s3t3, den4o3b6s2t3, den4o3b5s2t3, den4o3b4s2t2
create den4o3b3s2t3, den4o3b2s2t2, den4o3b1s2t2, den3o1b2s6t3, den3o3b4s2t2, den3o3b3s2t2, den3o3b2s3t1
create den3o4b2s1t1, den3o4b1s1t1, den2o2b4s3t2, den2o2b3s3t2, den2o3b4s1t1, den2o3b3s1t1, den2o3b2s2t1
create den2o4b2s1t1, den2o4b1s1t2, den1o4b16s1t1, den1o4b15s1t1, den1o3b7s2t1, den1o2b2s4t1, ah4
create den10o3b8s3t3, den10o4b8s3t1, den10o5b14s2t3, den10o5b13s2t2, den10o4b4s2t2, den10o5b6s1t3, den10o5b5s1t1
create den10o4b2s2t3, den10o4b1s2t2, den9o4b8s1t2, den9o4b7s1t1, den9o3b3s3t3, den9o3b2s2t1, den9o3b1s2t2
create den8o2b4s5t3, den8o3b6s4t3, den8o5b20s1t1, den8o5b19s1t1, den8o5b18s1t1, den8o5b17s1t1, den8o3b4s3t3
create den7o2b3s4t3, den7o5b16s1t1, den7o5b15s1t1, den7o4b7s2t1, den7o4b6s3t3, den7o4b5s3t1, den6o4b12s1t3
create den6o4b11s1t1, den6o4b10s1t1, den6o4b9s1t3, den6o5b16s1t1, den6o5b15s1t1, den6o4b7s3t1, den6o4b4s3t1
create den6o4b3s3t3, den6o5b3s2t1, den6o5b2s2t2, den6o5b1s2t2, den5o2b4s4t3, den5o3b6s2t3, den5o3b5s2t1
create den5o4b8s1t1, den5o4b7s1t1, den5o3b3s3t1, den5o3b2s1t1, den5o3b1s1t1, den4o4b16s2t2, den4o5b30s1t1
create den4o5b29s1t2, den4o4b8s1t1, den4o4b7s1t1, den4o4b4s1t1, den4o4b3s1t1, den4o4b2s1t1, den4o4b1s1t2
create den3o4b8s1t1, den3o4b7s1t1, den3o4b6s1t1, den3o4b5s1t1, den3o3b2s4t1, den3o4b2s2t2, den3o4b1s2t1
create den2o3b8s1t1, den2o3b7s1t1, den2o3b6s1t1, den2o3b5s1t1, den2o3b4s2t1, den2o3b3s2t2, den2o3b2s3t2
create den2o4b2s2t1, den2o5b2s1t1, den2o5b1s1t1, den1o4b16s2t3, den1o4b15s2t3, den1o3b7s3t1, den1o2b2s5t1
create ah3, den10o4b8s4t3, den10o6b26s1t1, den10o6b25s1t1, den10o5b8s1t1, den10o5b7s1t1, den10o5b5s2t3
create den10o5b2s1t1, den10o5b1s1t3, den9o5b16s1t1, den9o5b15s1t1, den9o4b7s2t3, den9o3b2s3t3, den9o4b2s1t1
create den9o4b1s1t1, den8o5b20s2t3, den8o5b19s2t1, den8o5b18s2t3, den8o5b17s2t2, den7o5b16s2t3, den7o5b15s2t1
create den7o4b7s3t3, den7o4b5s4t3, den6o4b11s2t1, den6o4b10s2t3, den6o5b16s2t1, den6o5b15s2t3, den6o4b7s4t3
create den6o4b4s4t3, den6o5b3s3t1, den6o6b4s1t1, den6o6b3s1t1, den6o6b2s1t1, den6o6b1s1t2, den5o3b5s3t1
create den5o4b8s2t3, den5o4b7s2t3, den5o3b3s4t3, den5o3b2s2t3, den5o3b1s2t3, den4o5b32s1t1, den4o5b31s1t1
create den4o5b30s2t2, den4o6b58s1t3, den4o6b57s1t1, den4o4b8s2t3, den4o4b7s2t3, den4o4b4s2t1, den4o4b3s2t1
create den4o4b2s2t2, den4o5b2s1t1, den4o5b1s1t1, den3o4b8s2t3, den3o4b7s2t3, den3o4b6s2t3, den3o4b5s2t1
create den3o3b2s5t1, den3o5b4s1t1, den3o5b3s1t1, den3o4b1s3t2, den2o3b8s2t3, den2o3b7s2t2, den2o3b6s2t1
create den2o3b5s2t1, den2o3b4s3t1, den2o4b6s1t1, den2o4b5s1t1, den2o4b4s1t3, den2o4b3s1t1, den2o4b2s3t1
create den2o5b2s2t2, den2o5b1s2t1, den1o3b7s4t3, den1o2b2s6t3, ah2, den10o6b26s2t1, den10o6b25s2t3
create den10o5b8s2t3, den10o5b7s2t2, den10o5b2s2t3, den9o5b16s2t3, den9o5b15s2t3, den9o4b2s2t3, den9o4b1s2t3
create den8o5b19s3t3, den8o6b34s1t2, den8o6b33s1t1, den7o5b15s3t1, den6o4b11s3t1, den6o5b16s3t1, den6o5b3s4t2
create den6o6b4s2t3, den6o6b3s2t2, den6o6b2s2t1, den6o7b2s1t1, den6o7b1s1t1, den5o3b5s4t3, den4o5b32s2t1
create den4o5b31s2t3, den4o6b60s1t1, den4o6b59s1t1, den4o6b57s2t1, den4o4b4s3t1, den4o4b3s3t1, den4o5b4s1t1
create den4o5b3s1t1, den4o5b2s2t3, den4o5b1s2t3, den3o4b5s3t1, den3o3b2s6t1, den3o5b4s2t1, den3o5b3s2t1
create den3o5b2s1t1, den3o5b1s1t2, den2o4b14s1t2, den2o4b13s1t1, den2o3b6s3t3, den2o3b5s3t3, den2o3b4s4t2
create den2o4b6s2t2, den2o4b5s2t2, den2o4b3s2t2, den2o4b2s4t3, den2o6b4s1t1, den2o6b3s1t1, den2o5b1s3t3
create ah1, den10o6b26s3t3, den10o6b14s1t3, den10o6b13s1t1, den8o7b68s1t3, den8o7b67s1t3, den8o6b33s2t1
create den7o5b15s4t3, den6o4b11s4t3, den6o5b16s4t3, den6o6b6s1t1, den6o6b5s1t1, den6o7b6s1t1, den6o7b5s1t1
create den6o6b2s3t3, den6o7b2s2t2, den6o7b1s2t1, den4o5b32s3t1, den4o6b60s2t3, den4o6b59s2t3, den4o6b57s3t1
create den4o4b4s4t3, den4o4b3s4t3, den4o5b4s2t1, den4o5b3s2t3, den3o4b5s4t1, den3o3b2s7t1, den3o5b4s3t1
create den3o5b3s3t3, den3o5b2s2t3, den3o6b2s1t1, den3o6b1s1t1, den2o5b28s1t1, den2o5b27s1t2, den2o4b13s2t3
create den2o4b8s1t3, den2o4b7s1t3, den2o5b12s1t1, den2o5b11s1t3, den2o5b10s1t1, den2o5b9s1t3, den2o5b6s1t1
create den2o5b5s1t1, den2o6b4s2t1, den2o6b3s2t3, iseg, den10o6b13s2t3, den8o6b33s3t2, den6o6b6s2t3
create den6o6b5s2t2, den6o7b6s2t3, den6o7b5s2t2, den6o8b4s1t1, den6o8b3s1t1, den6o7b1s3t1, den4o5b32s4t1
create den4o6b57s4t3, den4o5b4s3t1, den3o4b5s5t3, den3o3b2s8t1, den3o5b4s4t3, den3o6b2s2t3, den3o6b1s2t3
create den2o5b28s2t3, den2o6b54s1t1, den2o6b53s1t1, den2o5b12s2t3, den2o5b10s2t3, den2o5b6s2t3, den2o5b5s2t3
create den2o6b4s3t3, den8o7b66s1t1, den8o7b65s1t1, den6o7b10s1t1, den6o7b9s1t3, den6o8b10s1t1, den6o8b9s1t1
create den6o8b4s2t3, den6o8b3s2t2, den6o7b1s4t3, den4o5b32s5t3, den4o5b4s4t3, den3o3b2s9t3, den2o6b54s2t3
create den2o6b53s2t3, den8o7b66s2t3, den8o7b65s2t3, den6o7b10s2t3, den6o8b10s2t3, den6o8b9s2t3, den6o9b6s1t1
create den6o9b5s1t1, den6o9b6s2t1, den6o9b5s2t1, den6o9b6s3t3, den6o9b5s3t3

proc topol() { local i
  connect ah11(0), soma(0)
  connect den10o0b1s1t2(0), soma(0.5)
  connect den9o0b1s1t2(0), soma(0.5)
  connect den8o0b1s1t1(0), soma(0.5)
  connect den7o0b1s1t1(0), soma(0.5)
  connect den6o0b1s1t2(0), soma(0.5)
  connect den5o0b1s1t1(0), soma(0.5)
  connect den4o0b1s1t2(0), soma(0.5)
  connect den3o0b1s1t2(0), soma(0.5)
  connect den2o0b1s1t1(0), soma(0.5)
  connect den1o0b1s1t2(0), soma(0.5)
  connect ah10(0), ah11(1)
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  topol_1()
}
proc topol_1() {
  connect den1o2b2s3t1(0), den1o2b2s2t1(1)
  connect den1o2b1s3t3(0), den1o2b1s2t1(1)
  connect ah5(0), ah6(1)
  connect den10o3b8s2t1(0), den10o3b8s1t1(1)
  connect den10o3b7s2t3(0), den10o3b7s1t1(1)
  connect den10o4b8s2t1(0), den10o4b8s1t1(1)
  connect den10o5b14s1t1(0), den10o4b7s1t2(1)
  connect den10o5b13s1t1(0), den10o4b7s1t2(1)
  connect den10o4b4s1t1(0), den10o3b2s2t2(1)
  connect den10o4b3s1t2(0), den10o3b2s2t2(1)
  connect den10o4b2s1t1(0), den10o3b1s2t2(1)
  connect den10o4b1s1t1(0), den10o3b1s2t2(1)
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  topol_2()
}
proc topol_2() {
  connect den4o5b1s1t1(0), den4o4b1s1t2(1)
  connect den3o4b8s2t3(0), den3o4b8s1t1(1)
  connect den3o4b7s2t3(0), den3o4b7s1t1(1)
  connect den3o4b6s2t3(0), den3o4b6s1t1(1)
  connect den3o4b5s2t1(0), den3o4b5s1t1(1)
  connect den3o3b2s5t1(0), den3o3b2s4t1(1)
  connect den3o5b4s1t1(0), den3o4b2s2t2(1)
  connect den3o5b3s1t1(0), den3o4b2s2t2(1)
  connect den3o4b1s3t2(0), den3o4b1s2t1(1)
  connect den2o3b8s2t3(0), den2o3b8s1t1(1)
  connect den2o3b7s2t2(0), den2o3b7s1t1(1)
  connect den2o3b6s2t1(0), den2o3b6s1t1(1)
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  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, -30, 0, 60)
	pt3dadd(0, 30, 0, 60)
  }
  ah11 {pt3dclear()
	pt3dadd(0, 30, 0, 13)
	pt3dadd(0, 31.8182, 0, 13)
  }
  den10o0b1s1t2 {pt3dclear()
	pt3dadd(0, 0, 0, 9.36)
	pt3dadd(-19, 123, 0, 9.36)
  }
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  }
}
proc shape3d_2() {
  den9o2b2s2t2 {	pt3dadd(-425, 161, 0, 4.42)
  }
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  }
}
proc shape3d_3() {
  den1o2b3s3t3 {	pt3dadd(329, 394, 525, 0.78)
  }
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  }
}
proc shape3d_4() {
  den6o4b12s1t3 {	pt3dadd(111, 23, -675, 1.04)
  }
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  }
}
proc shape3d_5() {
  den4o5b2s1t1 {	pt3dadd(481, -313, 450, 1.3)
  }
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  }
}
proc shape3d_6() {
  den4o5b3s2t3 {	pt3dadd(752, -460, 750, 0.78)
  }
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
}

objref all, den, ah , Axon
proc subsets() { local i
  objref all, den, ah
  all = new SectionList()
    soma all.append()
    ah11 all.append()
    den10o0b1s1t2 all.append()
    den9o0b1s1t2 all.append()
    den8o0b1s1t1 all.append()
    den7o0b1s1t1 all.append()
    den6o0b1s1t2 all.append()
    den5o0b1s1t1 all.append()
    den4o0b1s1t2 all.append()
    den3o0b1s1t2 all.append()
    den2o0b1s1t1 all.append()
    den1o0b1s1t2 all.append()
    ah10 all.append()
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  subsets_1()
}
proc subsets_1(){
    den1o3b7s1t1 all.append()
    den1o2b3s3t3 all.append()
    den1o2b2s3t1 all.append()
    den1o2b1s3t3 all.append()
    ah5 all.append()
    den10o3b8s2t1 all.append()
    den10o3b7s2t3 all.append()
    den10o4b8s2t1 all.append()
    den10o5b14s1t1 all.append()
    den10o5b13s1t1 all.append()
    den10o4b4s1t1 all.append()
    den10o4b3s1t2 all.append()
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  subsets_2()
}
proc subsets_2(){
    den4o4b2s2t2 all.append()
    den4o5b2s1t1 all.append()
    den4o5b1s1t1 all.append()
    den3o4b8s2t3 all.append()
    den3o4b7s2t3 all.append()
    den3o4b6s2t3 all.append()
    den3o4b5s2t1 all.append()
    den3o3b2s5t1 all.append()
    den3o5b4s1t1 all.append()
    den3o5b3s1t1 all.append()
    den3o4b1s3t2 all.append()
    den2o3b8s2t3 all.append()
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    iseg all.append()
    den10o6b13s2t3 all.append()
    den8o6b33s3t2 all.append()
    den6o6b6s2t3 all.append()
    den6o6b5s2t2 all.append()
    den6o7b6s2t3 all.append()
    den6o7b5s2t2 all.append()
    den6o8b4s1t1 all.append()
    den6o8b3s1t1 all.append()
    den6o7b1s3t1 all.append()
    den4o5b32s4t1 all.append()
    den4o6b57s4t3 all.append()
    den4o5b4s3t1 all.append()
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
  den = new SectionList()
    den10o0b1s1t2 den.append()
    den9o0b1s1t2 den.append()
    den8o0b1s1t1 den.append()
    den7o0b1s1t1 den.append()
    den6o0b1s1t2 den.append()
    den5o0b1s1t1 den.append()
    den4o0b1s1t2 den.append()
    den3o0b1s1t2 den.append()
    den2o0b1s1t1 den.append()
    den1o0b1s1t2 den.append()
    den10o1b2s1t1 den.append()
    den10o1b1s1t2 den.append()
    den9o1b2s1t1 den.append()
    den9o1b1s1t1 den.append()
    den8o0b1s2t2 den.append()
    den7o0b1s2t2 den.append()
    den6o1b2s1t1 den.append()
    den6o1b1s1t2 den.append()
    den5o0b1s2t2 den.append()
    den4o1b2s1t2 den.append()
    den4o1b1s1t1 den.append()
    den3o1b2s1t1 den.append()
    den3o1b1s1t1 den.append()
  subsets_3()
}
proc subsets_3(){
    den2o0b1s2t2 den.append()
    den1o1b2s1t1 den.append()
    den1o1b1s1t1 den.append()
    den10o1b2s2t2 den.append()
    den10o2b2s1t2 den.append()
    den10o2b1s1t1 den.append()
    den9o1b2s2t2 den.append()
    den9o1b1s2t2 den.append()
    den8o1b2s1t2 den.append()
    den8o1b1s1t2 den.append()
    den7o1b2s1t1 den.append()
    den7o1b1s1t2 den.append()
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  subsets_4()
}
proc subsets_4(){
    den7o4b7s1t1 den.append()
    den7o4b6s2t1 den.append()
    den7o4b5s2t1 den.append()
    den6o2b4s4t3 den.append()
    den6o3b6s2t2 den.append()
    den6o3b5s2t2 den.append()
    den6o4b8s2t2 den.append()
    den6o4b7s2t1 den.append()
    den6o4b4s2t1 den.append()
    den6o4b3s2t1 den.append()
    den6o5b4s1t3 den.append()
    den6o5b3s1t1 den.append()
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  subsets_5()
}
proc subsets_5(){
    den10o6b25s2t3 den.append()
    den10o5b8s2t3 den.append()
    den10o5b7s2t2 den.append()
    den10o5b2s2t3 den.append()
    den9o5b16s2t3 den.append()
    den9o5b15s2t3 den.append()
    den9o4b2s2t3 den.append()
    den9o4b1s2t3 den.append()
    den8o5b19s3t3 den.append()
    den8o6b34s1t2 den.append()
    den8o6b33s1t1 den.append()
    den7o5b15s3t1 den.append()
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}

proc geom() {
  forsec all {  }
}


external lambda_f
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    cm = 1
    Ra = 70
  }
  forsec "den" {
    insert pas
      g_pas = 7.8201e-005
      e_pas = -70
	insert info
  }
  soma {
    insert NafSm
      gnabar_NafSm = 0.08
      ena_NafSm = 50
	  amA_NafSm = 14
	  bmA_NafSm = 38
	  theta_h_NafSm = 55
    insert KdrSm
      gkdrbar_KdrSm = 1.2
      ek_KdrSm = -80
	  theta_n_KdrSm = 28
    insert CaSm
      gcanbar_CaSm = 0.0085776
      gcalbar_CaSm = 0
      gkcabar_CaSm = 0.025      //Set this value to ZERO to simulate the action of Apamin
      nexp_CaSm = 1.3
      kd_CaSm = 0.0001
      f_CaSm = 0.013
      alpha_CaSm = 1.3
      kca_CaSm = 2.35
	  thetamn_CaSm = 22
	  thetahn_CaSm = 40
    insert pas
      g_pas = 0.002664
      e_pas = -70
  }
  iseg {
    insert NafIs
      gnabar_NafIs = 0.887
      ena_NafIs = 50
	  amA_NafIs = 10
	  bmA_NafIs = 30
	  theta_h_NafIs = 55
    insert KdrIs
      gkbar_KdrIs = 0.16552
      ek_KdrIs = -80
	  theta_n_KdrIs = 28
    insert pas
      g_pas = 0.002664
      e_pas = -70
    insert NapIs
      gnapbar_NapIs = 4.0571e-005
      ena_NapIs = 50
	  ampB_NapIs = 38.4
	  bmpB_NapIs = 42.7
  }
  forsec "ah" {
		insert NafIs
			gnabar_NafIs = iseg.gnabar_NafIs            				// AH is the same as Iseg
			//th_NafIs = 40				   								// Original value = 30 ms
			amA_NafIs = iseg.amA_NafIs
			bmA_NafIs = iseg.bmA_NafIs
			theta_h_NafIs = iseg.theta_h_NafIs
		insert NapIs
			gnapbar_NapIs = iseg.gnapbar_NapIs          				// AH is the same as Iseg
			ampB_NapIs = iseg.ampB_NapIs
			bmpB_NapIs = iseg.bmpB_NapIs
		insert KdrIs
			gkbar_KdrIs = iseg.gkbar_KdrIs              				// AH is the same as Iseg
			theta_n_KdrIs = iseg.theta_n_KdrIs
		insert pas
			g_pas = iseg.g_pas
			e_pas = iseg.e_pas
  }
  Vspike = 0
  ShiftThreshold(0)
}



proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}

func is_art() {return 3}

//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Procedure for shifting the model firing threshold. This is done by shifting the activation and inactivation curves
// of all channels in the model.

func ShiftThreshold() {local r

	// Channels for the soma
	//------------------------
	soma.amA_NafSm = 14 + $1
	soma.bmA_NafSm = 38 + $1
	soma.theta_h_NafSm = 55 - $1
	soma.theta_n_KdrSm = 28 - $1
	soma.thetamn_CaSm = 22 - $1
	soma.thetahn_CaSm = 40 - $1


	// Channels for the Iseg and AH
	//------------------------------
	iseg.amA_NafIs = 10 + $1
	iseg.bmA_NafIs = 30 + $1
	iseg.theta_h_NafIs = 55 - $1
	iseg.theta_n_KdrIs = 28 - $1
	iseg.ampB_NapIs = 38.4 - $1
	iseg.bmpB_NapIs = 42.7 - $1
	forsec "ah" {
		amA_NafIs = iseg.amA_NafIs
		bmA_NafIs = iseg.bmA_NafIs
		theta_h_NafIs = iseg.theta_h_NafIs
		theta_n_KdrIs = iseg.theta_n_KdrIs
		ampB_NapIs = iseg.ampB_NapIs
		bmpB_NapIs = iseg.bmpB_NapIs
	}
	r = -62 + $1

	return r

} // End of Procedure

//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

proc uninsert_Active_channels(){
    soma {
        uninsert NafSm
        uninsert KdrSm
        uninsert CaSm
    }
    iseg {
        uninsert NafIs
        uninsert KdrIs
        uninsert NapIs
    }
    forsec "ah" {
        uninsert NafIs
        uninsert KdrIs
        uninsert NapIs
    }

    forsec "den"{
        uninsert Llva
    }
    print "Active channels has been removed from Soma , iseg , ah sections, and dendrites too"
}


endtemplate S_Cell
